PsychoPy2experiment version="2024.2.2"
Settings
  Audio lib = ptb
  Completed URL = https://app.prolific.co/submissions/complete?cc=CKXJLI4I
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['Resources/Pigeon_online_InstructionsConditions.xlsx', 'Resources/PigeonSNRSet01Conditions.xlsx', 'Resources/PigeonSNRSet02Conditions.xlsx', 'Resources/PigeonTaskConditions.xlsx', 'Resources/Pigeon_predefined_commit_InstructionsConditions.xlsx', 'Resources/pigeon.png', 'Resources/PigeonGeneralInstructionsConditions.xlsx', 'Resources/PigeonSimpleDemoConditions.xlsx', 'Resources/PigeonStatusInstructionsConditions.xlsx', 'Resources/seeds.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = pigeon_task
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine experiment_setup
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    CodeComponent es_code_setup
      Code Type = Both
      Begin Experiment:
        # Global CONSTANTS and variables

        # Local variables needed in JS:
        still_going = True
        choice = ''

        # Colors
        # For JS:
        #white = new util.Color([1, 1, 1]);
        #grey = new util.Color([0.2, 0.2, 0.2]);
        #yellow = new util.Color([1, 1, 0]);
        #green = new util.Color([-1, 0, -1]);
        #lightgreen = new util.Color([0, 1, 0]);
        #black = new util.Color([-1, -1, -1]);
        #red = new util.Color([1, 0, 0]);
        white=[1,1,1]
        grey=[0.2,0.2,0.2]
        yellow=[1,1,0]
        green=[-1,0,-1]
        lightgreen=[0,1,0]
        black=[-1,-1,-1]
        red=[1,0,0]

        # Screen
        ORIGIN_X = 0
        ORIGIN_Y = 0
        SEEDS_WIDTH = 0.1
        SEEDS_HEIGHT = 0.1
        EDGE_DISTANCE = 0.75

        # Messages
        INSTRUCTION_X = ORIGIN_X
        INSTRUCTION_Y = 0.45
        INSTRUCTION_COLOR = yellow
        CHOICE_STRING = 'Press Left or Right arrow to choose'
        CONTINUE_STRING = 'Press Spacebar or any arrow to continue'
        PREDEFINED_CHOICE_STRING='Press Left/Up for small/large increases, Right/Down for small/large decreases,\nSpacebar to start the trial.'
        PREDEFINED_CHOICE_COMMIT_STRING='Press Left/Up for small/large increases, Right/Down for small/large decreases,\nc to commit or Spacebar to start the trial.'
        PREDEFINED_NO_CHOICE_STRING='Petey failed to reach the bound\nConsider moving it closer.'
        PREDEFINED_ABORT_INSTRUCTION='Press Spacebar or any arrow to abort trial'
        PREDEFINED_ABORT_STRING='Aborted early'
        CORRECT_STRING='Correct'
        ERROR_STRING='Error'
        MESSAGE_X = ORIGIN_X
        MESSAGE_Y = 0.3
        instruction_show = True
        instruction_string = CONTINUE_STRING
        message_show = True
        message_string = ''
        steps_string = ' '
        coins_string = ' '

        # Status symbols
        LINE_HEIGHT = 0.1
        STATUS_BAR_HEIGHT = 0.2
        STATUS_BAR_WIDTH = 0.1
        STATUS_BAR_BASE_Y = ORIGIN_Y-0.4
        STATUS_BAR_APEX_Y = STATUS_BAR_BASE_Y+STATUS_BAR_HEIGHT
        STATUS_BAR_BRACKET_WIDTH =  0.35
        ABSCISSA_Y = ORIGIN_Y-0.05
        ABSCISSA_WIDTH = EDGE_DISTANCE*2
        ORDINATE_Y = ORIGIN_Y+0.05
        ORDINATE_WIDTH = 0.2
        ORDINATE_HEIGHT = 0.01
        COINS_BAR_X = -0.1
        COINS_TEXT_X = -0.1
        COINS_TEXT_Y = -0.37
        COINS_LABEL_TEXT_X = -0.28
        COINS_LABEL_TEXT_Y = -0.2
        COINS_PROPERTIES_TEXT_X = -0.55
        COINS_PROPERTIES_TEXT_Y = -0.3
        STEPS_BAR_X = 0.1
        STEPS_TEXT_X = 0.1
        STEPS_TEXT_Y = -0.37
        STEPS_LABEL_TEXT_X = 0.3
        STEPS_LABEL_TEXT_Y = -0.2
        STEPS_PROPERTIES_TEXT_X = 0.55
        STEPS_PROPERTIES_TEXT_Y = -0.3
        steps_bar_height = 0
        steps_bar_center = 0
        coins_bar_height = 0
        coins_bar_center = 0

        # Predefined bound
        PREDEFINED_BOUND_COLOR = green
        PREDEFINED_BOUND_WIDTH = 0.2
        PREDEFINED_BOUND_HEIGHT = 0.01
        PREDEFINED_BOUND_Y = ORIGIN_Y+0.05
        PREDEFINED_BOUND_SMALL_DELTA = 0.003
        PREDEFINED_BOUND_LARGE_DELTA = 0.05
        PREDEFINED_BOUND_X_DEFAULT = 0.05
        PREDEFINED_BOUND_MARKER_SZ = 0.01
        PREDEFINED_BOUND_MARKER_Y = 0.16
        PREDEFINED_BOUND_MARKER_COLOR = lightgreen
        predefined_bound_x = PREDEFINED_BOUND_X_DEFAULT
        predefined_bound_x_previous = predefined_bound_x
        committed_to_bound = False
        predefined_bound_min_bonus = 0
        predefined_bound_max_bonus = 0
        min_steps_to_commit = 100

        # Stimulus display
        seeds_show = False
        pigeon_show = False
        status_show = False
        box_show = False

        # Timing/counting
        UPDATE_INTERVAL = 0.2
        PREDEFINED_UPDATE_INTERVAL = 0.1
        block_number = 0
        trial_number = 0
        trial_start = True
        bonus_count = 0

        # Task conditions
        task_type = 'online'
        STEPS_MAX_PER_TRIAL = 50
        coins_gained_per_correct = 1
        coins_lost_per_error = 1
        coins_paid_to_start_trial = 0
        coins_count = 2
        coins_max = 8
        steps_lost_per_error = 0
        steps_taken_to_start_trial = 1
        steps_count = 0
        steps_max = 200
        step_mean_val = 0.02
        step_std_val = 0.1
        last_coins_count = 0
        last_steps_count = 0

        # Pigeon position
        pigeon_flip = 0.1
        pigeon_true_x = 0
        pigeon_shown_x = pigeon_true_x
        pigeon_steps = []

        # Function to move pigeon, depends on random variables
        #   Note -- if you change this code, set code type to
        #   "Auto->JS" first to make sure the JS code gets updated,
        #   then set code type back to "both" and add the following
        #   line at the top of this function:
        #    global pigeon_flip, pigeon_true_x, pigeon_shown_x
        def move_pigeon_function(step_mean, step_std):
            global pigeon_flip, pigeon_true_x, pigeon_shown_x

            for i in range(10):
                u = 2*random()-1
                v = 2*random()-1
                r = u*u + v*v
                if r!=0 and r<1:
                    break
            new_step = step_mean + step_std*u*sqrt(-2*log(r)/r)
            if new_step > 0:
                pigeon_flip = -0.1
            else:
                pigeon_flip = 0.1

            pigeon_true_x = pigeon_true_x + new_step
            if pigeon_true_x >= EDGE_DISTANCE:
                pigeon_shown_x = EDGE_DISTANCE
            elif pigeon_true_x <= -EDGE_DISTANCE:
                pigeon_shown_x = -EDGE_DISTANCE
            else:
                pigeon_shown_x = pigeon_true_x

        # Function to update status text/graphics
        #   Note -- if you change this code, set code type to
        #   "Auto->JS" first to make sure the JS code gets updated,
        #   then set code type back to "both" and add the following
        #   line at the top of this function:
        #    global coins_string, steps_string, coins_bar_height, coins_bar_center, steps_bar_height, steps_bar_center
        def update_status_function(update_text, update_coins_bar, update_steps_bar):
            global coins_string, steps_string, coins_bar_height, coins_bar_center, steps_bar_height, steps_bar_center

            # Conditionally update strings
            if update_text:
                coins_string = 'Coins gained per correct choice = ' + str(coins_gained_per_correct) + '\nCoins lost per error choice = ' + str(coins_lost_per_error) + '\nCoins paid to start each trial = ' + str(coins_paid_to_start_trial) + '\nTarget number of coins for bonus = ' + str(coins_max)
                steps_string = 'Total steps = ' + str(steps_max) + '\nSteps lost per error choice = ' + str(steps_lost_per_error) + '\nSteps taken to start each trial = ' + str(steps_taken_to_start_trial)

            # Conditionally update coins bar
            if update_coins_bar:
                if coins_count <= coins_max:
                    coins_bar_height = coins_count/coins_max*STATUS_BAR_HEIGHT
                else:
                    coins_bar_height = STATUS_BAR_HEIGHT+0.02
                coins_bar_center = STATUS_BAR_BASE_Y+coins_bar_height/2

            # Conditionally update steps bar
            if update_steps_bar:
                steps_bar_height = (steps_max-steps_count)/steps_max*STATUS_BAR_HEIGHT
                steps_bar_center = STATUS_BAR_BASE_Y+steps_bar_height/2

        # Function to show feedback after each trial
        #   Note -- if you change this code, set code type to
        #   "Auto->JS" first to make sure the JS code gets updated,
        #   then set code type back to "both" and add the following
        #   line at the top of this function:
        #   global last_coins_count, last_steps_count, message_string
        def set_trial_end_string_function(feedback_string):
            global last_coins_count, last_steps_count, message_string

            coins_change = coins_count - last_coins_count
            steps_change = steps_count - last_steps_count
            if coins_change > 0:
                coins_feedback_string = str(coins_change) + ' coins gained'
            elif coins_change < 0:
                coins_feedback_string = str(coins_change) + ' coins lost'
            else:
                coins_feedback_string = 'no coins gained or lost'

            message_string = feedback_string + '\n\n' + coins_feedback_string + '\n\n' + str(steps_change) + ' steps used this trial'
            last_coins_count = coins_count
            last_steps_count = steps_count

        # Function to generate standard string at the end of each block
        #   Note -- if you change this code, set code type to
        #   "Auto->JS" first to make sure the JS code gets updated,
        #   then set code type back to "both" and add the following
        #   line at the top of this function:
        #    global message_string, bonus_count, coins_count, coins_bar_height, coins_bar_center
        def set_block_end_string_function():
            global message_string, bonus_count, coins_count, coins_bar_height, coins_bar_center

            if (task_type == 'predefined_commit' and predefined_bound_x >= predefined_bound_min_bonus and predefined_bound_x <= predefined_bound_max_bonus) or (task_type != 'predefined_commit' and coins_count >= coins_max):
                message_string='Block finished.\n\nYou earned a bonus. Great job!'
                bonus_count += 1
                coins_bar_height = STATUS_BAR_HEIGHT
                coins_bar_center = STATUS_BAR_BASE_Y+coins_bar_height/2
                coins_count = 'Bonus!'
            else:
                message_string='Block finished.\n\nGreat job!'
                coins_bar_height = 0
                coins_bar_center = STATUS_BAR_BASE_Y
                coins_count = 'No bonus'

        move_pigeon = move_pigeon_function
        update_status = update_status_function
        set_trial_end_string = set_trial_end_string_function
        set_block_end_string = set_block_end_string_function
        update_status(True, True, True)
      Begin JS Experiment:
        still_going = true;
        choice = "";
        white = new util.Color([1, 1, 1]);
        grey = new util.Color([0.2, 0.2, 0.2]);
        yellow = new util.Color([1, 1, 0]);
        green = new util.Color([-1, 0, -1]);
        lightgreen = new util.Color([0, 1, 0]);
        black = new util.Color([-1, -1, -1]);
        red = new util.Color([1, 0, 0]);
        ORIGIN_X = 0;
        ORIGIN_Y = 0;
        SEEDS_WIDTH = 0.1;
        SEEDS_HEIGHT = 0.1;
        EDGE_DISTANCE = 0.75;
        INSTRUCTION_X = ORIGIN_X;
        INSTRUCTION_Y = 0.45;
        INSTRUCTION_COLOR = yellow;
        CHOICE_STRING = "Press Left or Right arrow to choose";
        CONTINUE_STRING = "Press Spacebar or any arrow to continue";
        PREDEFINED_CHOICE_STRING = "Press Left/Up for small/large increases, Right/Down for small/large decreases,\nSpacebar to start the trial.";
        PREDEFINED_CHOICE_COMMIT_STRING = "Press Left/Up for small/large increases, Right/Down for small/large decreases,\nc to commit or Spacebar to start the trial.";
        PREDEFINED_NO_CHOICE_STRING = "Petey failed to reach the bound\nConsider moving it closer.";
        PREDEFINED_ABORT_INSTRUCTION = "Press Spacebar or any arrow to abort trial";
        PREDEFINED_ABORT_STRING = "Aborted early";
        CORRECT_STRING = "Correct";
        ERROR_STRING = "Error";
        MESSAGE_X = ORIGIN_X;
        MESSAGE_Y = 0.3;
        instruction_show = true;
        instruction_string = CONTINUE_STRING;
        message_show = true;
        message_string = "";
        steps_string = " ";
        coins_string = " ";
        LINE_HEIGHT = 0.1;
        STATUS_BAR_HEIGHT = 0.2;
        STATUS_BAR_WIDTH = 0.1;
        STATUS_BAR_BASE_Y = (ORIGIN_Y - 0.4);
        STATUS_BAR_APEX_Y = (STATUS_BAR_BASE_Y + STATUS_BAR_HEIGHT);
        STATUS_BAR_BRACKET_WIDTH = 0.35;
        ABSCISSA_Y = (ORIGIN_Y - 0.05);
        ABSCISSA_WIDTH = (EDGE_DISTANCE * 2);
        ORDINATE_Y = (ORIGIN_Y + 0.05);
        ORDINATE_WIDTH = 0.2;
        ORDINATE_HEIGHT = 0.01;
        COINS_BAR_X = (- 0.1);
        COINS_TEXT_X = (- 0.1);
        COINS_TEXT_Y = (- 0.37);
        COINS_LABEL_TEXT_X = (- 0.28);
        COINS_LABEL_TEXT_Y = (- 0.2);
        COINS_PROPERTIES_TEXT_X = (- 0.55);
        COINS_PROPERTIES_TEXT_Y = (- 0.3);
        STEPS_BAR_X = 0.1;
        STEPS_TEXT_X = 0.1;
        STEPS_TEXT_Y = (- 0.37);
        STEPS_LABEL_TEXT_X = 0.3;
        STEPS_LABEL_TEXT_Y = (- 0.2);
        STEPS_PROPERTIES_TEXT_X = 0.55;
        STEPS_PROPERTIES_TEXT_Y = (- 0.3);
        steps_bar_height = 0;
        steps_bar_center = 0;
        coins_bar_height = 0;
        coins_bar_center = 0;
        PREDEFINED_BOUND_COLOR = green;
        PREDEFINED_BOUND_WIDTH = 0.2;
        PREDEFINED_BOUND_HEIGHT = 0.01;
        PREDEFINED_BOUND_Y = (ORIGIN_Y + 0.05);
        PREDEFINED_BOUND_SMALL_DELTA = 0.003;
        PREDEFINED_BOUND_LARGE_DELTA = 0.05;
        PREDEFINED_BOUND_X_DEFAULT = 0.05;
        PREDEFINED_BOUND_MARKER_SZ = 0.01;
        PREDEFINED_BOUND_MARKER_Y = 0.16;
        PREDEFINED_BOUND_MARKER_COLOR = lightgreen;
        predefined_bound_x = PREDEFINED_BOUND_X_DEFAULT;
        predefined_bound_x_previous = predefined_bound_x;
        committed_to_bound = false;
        predefined_bound_min_bonus = 0;
        predefined_bound_max_bonus = 0;
        min_steps_to_commit = 100;
        seeds_show = false;
        pigeon_show = false;
        status_show = false;
        box_show = false;
        UPDATE_INTERVAL = 0.2;
        PREDEFINED_UPDATE_INTERVAL = 0.1;
        block_number = 0;
        trial_number = 0;
        trial_start = true;
        bonus_count = 0;
        task_type = "online";
        STEPS_MAX_PER_TRIAL = 50;
        coins_gained_per_correct = 1;
        coins_lost_per_error = 1;
        coins_paid_to_start_trial = 0;
        coins_count = 2;
        coins_max = 8;
        steps_lost_per_error = 0;
        steps_taken_to_start_trial = 1;
        steps_count = 0;
        steps_max = 200;
        step_mean_val = 0.02;
        step_std_val = 0.1;
        last_coins_count = 0;
        last_steps_count = 0;
        pigeon_flip = 0.1;
        pigeon_true_x = 0;
        pigeon_shown_x = pigeon_true_x;
        pigeon_steps = [];
        function move_pigeon_function(step_mean, step_std) {
            var new_step, r, u, v;
            for (var i, _pj_c = 0, _pj_a = util.range(10), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                u = ((2 * Math.random()) - 1);
                v = ((2 * Math.random()) - 1);
                r = ((u * u) + (v * v));
                if (((r !== 0) && (r < 1))) {
                    break;
                }
            }
            new_step = (step_mean + ((step_std * u) * Math.sqrt((((- 2) * Math.log(r)) / r))));
            if ((new_step > 0)) {
                pigeon_flip = (- 0.1);
            } else {
                pigeon_flip = 0.1;
            }
            pigeon_true_x = (pigeon_true_x + new_step);
            if ((pigeon_true_x >= EDGE_DISTANCE)) {
                pigeon_shown_x = EDGE_DISTANCE;
            } else {
                if ((pigeon_true_x <= (- EDGE_DISTANCE))) {
                    pigeon_shown_x = (- EDGE_DISTANCE);
                } else {
                    pigeon_shown_x = pigeon_true_x;
                }
            }
        }
        function update_status_function(update_text, update_coins_bar, update_steps_bar) {
            if (update_text) {
                coins_string = ((((((("Coins gained per correct choice = " + coins_gained_per_correct.toString()) + "\nCoins lost per error choice = ") + coins_lost_per_error.toString()) + "\nCoins paid to start each trial = ") + coins_paid_to_start_trial.toString()) + "\nTarget number of coins for bonus = ") + coins_max.toString());
                steps_string = ((((("Total steps = " + steps_max.toString()) + "\nSteps lost per error choice = ") + steps_lost_per_error.toString()) + "\nSteps taken to start each trial = ") + steps_taken_to_start_trial.toString());
            }
            if (update_coins_bar) {
                if ((coins_count <= coins_max)) {
                    coins_bar_height = ((coins_count / coins_max) * STATUS_BAR_HEIGHT);
                } else {
                    coins_bar_height = (STATUS_BAR_HEIGHT + 0.02);
                }
                coins_bar_center = (STATUS_BAR_BASE_Y + (coins_bar_height / 2));
            }
            if (update_steps_bar) {
                steps_bar_height = (((steps_max - steps_count) / steps_max) * STATUS_BAR_HEIGHT);
                steps_bar_center = (STATUS_BAR_BASE_Y + (steps_bar_height / 2));
            }
        }
        function set_trial_end_string_function(feedback_string) {
            var coins_change, coins_feedback_string, steps_change;
            coins_change = (coins_count - last_coins_count);
            steps_change = (steps_count - last_steps_count);
            if ((coins_change > 0)) {
                coins_feedback_string = (coins_change.toString() + " coins gained");
            } else {
                if ((coins_change < 0)) {
                    coins_feedback_string = (coins_change.toString() + " coins lost");
                } else {
                    coins_feedback_string = "no coins gained or lost";
                }
            }
            message_string = (((((feedback_string + "\n\n") + coins_feedback_string) + "\n\n") + steps_change.toString()) + " steps used this trial");
            last_coins_count = coins_count;
            last_steps_count = steps_count;
        }
        function set_block_end_string_function() {
            if (((((task_type === "predefined_commit") && (predefined_bound_x >= predefined_bound_min_bonus)) && (predefined_bound_x <= predefined_bound_max_bonus)) || ((task_type !== "predefined_commit") && (coins_count >= coins_max)))) {
                message_string = "Block finished.\n\nYou earned a bonus. Great job!";
                bonus_count += 1;
                coins_bar_height = STATUS_BAR_HEIGHT;
                coins_bar_center = (STATUS_BAR_BASE_Y + (coins_bar_height / 2));
                coins_count = "Bonus!";
            } else {
                message_string = "Block finished.\n\nGreat job!";
                coins_bar_height = 0;
                coins_bar_center = STATUS_BAR_BASE_Y;
                coins_count = "No bonus";
            }
        }
        move_pigeon = move_pigeon_function;
        update_status = update_status_function;
        set_trial_end_string = set_trial_end_string_function;
        set_block_end_string = set_block_end_string_function;
        update_status(true, true, true);
  Routine online_task_run
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    KeyboardComponent otr_kbd_response
      allowedKeys = 'left','right'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      store = nothing
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    CodeComponent otr_code_update
      Code Type = Auto->JS
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      Begin Routine:
        if trial_start is True:

            # Clear keyboard events
            otr_kbd_response.clearEvents()

            # Default feedback
            message_string = 'Failed to respond\nPlease respond more quickly'

            # Set instruction string
            instruction_string = CHOICE_STRING

            # Initialize pigeon variables
            pigeon_flip = 0.1
            pigeon_true_x = ORIGIN_X
            pigeon_shown_x = pigeon_true_x
            pigeon_steps = [pigeon_shown_x]

            step_mean = ssc_step_mean
            step_std = ssc_step_std

            # Pay to play
            coins_count += coins_paid_to_start_trial
            steps_count += steps_taken_to_start_trial

            # Randomize direction, set std
            if randint(0,2)==1:
                correct_ans = 'right'
                step_mean_val = abs(step_mean)
            else:
                correct_ans = 'left'
                step_mean_val = -1*abs(step_mean)
            step_std_val = step_std

            # Save trial parameters
            thisExp.addData('step_mean_val', step_mean_val)
            thisExp.addData('step_std_val', step_std_val)
            thisExp.addData('block_number', block_number)
            thisExp.addData('trial_number', trial_number)
            thisExp.addData('correct', correct_ans)

            # Set flag
            trial_start = False

        else:

            # Increment the counter and move the pigeon
            steps_count += 1
            move_pigeon(step_mean_val, step_std_val)
            pigeon_steps.append(pigeon_shown_x)

            # Update steps status
            update_status(False, False, True)

        # Check for end of task (no more steps)
        if steps_count >= steps_max:

            # Drop out
            endroutine = True;
            online_move_loop.finished = True
            online_trial_loop.finished = True
      End Routine:
        if online_trial_loop.finished is True:

             # Cap # of steps
            steps_count = steps_max;

            # Save results
            thisExp.addData('pigeon_steps', pigeon_steps)
            thisExp.addData('coins_count', coins_count)
            thisExp.addData('steps_count', steps_count)
            thisExp.addData('choice', 'none')

            # Drop out of this block loop
            set_block_end_string()
            thisExp.addData('bonus', bonus_count)

        elif otr_kbd_response.keys:

            # Parse answer and update status
            if correct_ans in otr_kbd_response.keys:
                coins_count += coins_gained_per_correct
                set_trial_end_string(CORRECT_STRING)
                update_status(False, True, False)
            else:
                coins_count -= coins_lost_per_error
                steps_count += steps_lost_per_error
                if steps_count >= steps_max:
                    steps_count = steps_max
                set_trial_end_string(ERROR_STRING)

            # Save results
            thisExp.addData('pigeon_steps', pigeon_steps)
            thisExp.addData('coins_count', coins_count)
            thisExp.addData('steps_count', steps_count)
            thisExp.addData('choice', otr_kbd_response.keys)

            # update status
            update_status(False, True, True)

            # Clear keyboard events
            otr_kbd_response.clearEvents()

            # Drop out of pigeon movement loop
            trial_number += 1
            online_move_loop.finished = True
    PolygonComponent otr_polygon_abscissa
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,ABSCISSA_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (EDGE_DISTANCE*2,LINE_HEIGHT)
      startVal [time (s)] = 0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    PolygonComponent otr_polygon_ordinate
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (ORIGIN_X,ORDINATE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ORDINATE_WIDTH,ORDINATE_HEIGHT)
      startVal [time (s)] = 0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    PolygonComponent otr_polygon_petey_midpoint
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = red
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (pigeon_shown_x,ORDINATE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ORDINATE_WIDTH*0.9,ORDINATE_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    ImageComponent otr_image_pigeon
      image = Resources/pigeon.png
      pos [set every repeat] = (pigeon_shown_x,ORIGIN_Y)
      saveStartStop = False
      size [set every repeat] = (pigeon_flip, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    ImageComponent otr_image_right_seeds
      image = Resources/seeds.png
      pos = (EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size = (SEEDS_WIDTH,SEEDS_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    ImageComponent otr_image_left_seeds
      image = Resources/seeds.png
      pos = (-EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size = (SEEDS_WIDTH,SEEDS_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    PolygonComponent otr_polygon_coins_bar
      fillColor = white
      pos [set every repeat] = (COINS_BAR_X,coins_bar_center)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (STATUS_BAR_WIDTH,coins_bar_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    PolygonComponent otr_polygon_steps_bar
      fillColor = white
      pos [set every repeat] = (STEPS_BAR_X,steps_bar_center)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (STATUS_BAR_WIDTH,steps_bar_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    PolygonComponent otr_polygon_status_bar_apex
      fillColor = black
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,STATUS_BAR_APEX_Y) 
      saveStartStop = False
      shape = line
      size [set every repeat] = (STATUS_BAR_BRACKET_WIDTH,LINE_HEIGHT) 
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    PolygonComponent otr_polygon_status_bar_base
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,STATUS_BAR_BASE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (STATUS_BAR_BRACKET_WIDTH,LINE_HEIGHT) 
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    TextComponent otr_text_coins
      color = black
      letterHeight = 0.03
      pos = (COINS_TEXT_X,COINS_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      text [set every repeat] = $coins_count
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    TextComponent otr_text_coins_label
      color = black
      letterHeight = 0.03
      pos = (COINS_LABEL_TEXT_X,COINS_LABEL_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      text = Coins earned
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    TextComponent otr_text_coins_properties
      letterHeight = 0.025
      pos = (COINS_PROPERTIES_TEXT_X,COINS_PROPERTIES_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      text [set every repeat] = $coins_string
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    TextComponent otr_text_steps
      color = black
      letterHeight = 0.03
      pos = (STEPS_TEXT_X,STEPS_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      text [set every repeat] = $steps_max - steps_count
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    TextComponent otr_text_steps_label
      color = black
      letterHeight = 0.03
      pos = (STEPS_LABEL_TEXT_X,STEPS_LABEL_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      text = Steps remaining
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    TextComponent otr_text_steps_properties
      letterHeight = 0.025
      pos = (STEPS_PROPERTIES_TEXT_X,STEPS_PROPERTIES_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      text [set every repeat] = $steps_string
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    TextComponent otr_text_instruction
      color = $INSTRUCTION_COLOR
      letterHeight = 0.02
      pos = (INSTRUCTION_X,INSTRUCTION_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      text [set every repeat] = $instruction_string
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    TextComponent show_snr
      disabled = True
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      text [set every frame] = $f'mean={step_mean}, std={step_std}'
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  Routine simple_demo
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    CodeComponent sd_code_update
      Code Type = Auto->JS
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      Begin Routine:
        if demo_start:
            # initialize pigeon variables
            pigeon_flip = 0.1
            pigeon_true_x = 0
            pigeon_shown_x = pigeon_true_x

            # Randomize direction, set std
            if randint(0,2)==0:
                step_mean_val = -1*abs(step_mean)
            else:
                step_mean_val = abs(step_mean)
            step_std_val = step_mean

            # unset flag
            demo_start = False
        else:
            # Check for completion
            if pigeon_true_x > -EDGE_DISTANCE and pigeon_true_x < EDGE_DISTANCE:
                move_pigeon(step_mean_val, step_std_val)
            else:
                simple_demo_trial_loop.finished = True
    PolygonComponent sd_polygon_abscissa
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,ABSCISSA_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (EDGE_DISTANCE*2,LINE_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    ImageComponent sd_image_left_seeds
      image = Resources/seeds.png
      pos = (-EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size = (SEEDS_WIDTH,SEEDS_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    ImageComponent sd_image_right_seeds
      image = Resources/seeds.png
      pos = (EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size = (SEEDS_WIDTH,SEEDS_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    ImageComponent sd_image_pigeon
      image = Resources/pigeon.png
      pos [set every repeat] = (pigeon_shown_x,ORIGIN_Y)
      saveStartStop = False
      size [set every repeat] = (pigeon_flip, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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  Routine show_message
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    KeyboardComponent sm_kbd_continue
      allowedKeys = 'space', 'up', 'down', 'left', 'right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent sm_code_update
      Code Type = Auto->JS
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      Begin Experiment:
        box_width = 0
        box_height = 0
        box_x = 0
        box_y = 0
      Begin Routine:
        # Clear all keyboard events
        sm_kbd_continue.clearEvents()
      End Routine:
        # Ick, but whatever. Makes sure that we don't ever
        # drop unexpectedly out of a move loop without
        # resetting
        trial_start = True
    PolygonComponent sm_polygon_box
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 3
      pos [set every repeat] = (box_x,box_y)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (box_width,box_height)
      startVal [condition] = box_show
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    PolygonComponent sm_polygon_abscissa
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,ABSCISSA_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ABSCISSA_WIDTH,LINE_HEIGHT)
      startVal [condition] = pigeon_show
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    PolygonComponent sm_polygon_ordinate
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (ORIGIN_X,ORDINATE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ORDINATE_WIDTH,ORDINATE_HEIGHT)
      startVal [condition] = status_show
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    PolygonComponent sm_polygon_petey_midpoint
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (pigeon_shown_x,ORDINATE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ORDINATE_WIDTH*0.9,ORDINATE_HEIGHT)
      startVal [condition] = status_show
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    ImageComponent sm_image_right_seeds
      image = Resources/seeds.png
      pos = (EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size = (SEEDS_WIDTH,SEEDS_HEIGHT)
      startVal [condition] = seeds_show
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    ImageComponent sm_image_left_seeds
      image = Resources/seeds.png
      pos = (-EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size = (SEEDS_WIDTH,SEEDS_HEIGHT)
      startVal [condition] = seeds_show
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    ImageComponent sm_image_petey
      image = Resources/pigeon.png
      pos [set every repeat] = (pigeon_shown_x,ORIGIN_Y)
      saveStartStop = False
      size [set every repeat] = (pigeon_flip, 0.1)
      startVal [condition] = pigeon_show
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    PolygonComponent sm_polygon_coin_bar
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      pos [set every repeat] = (COINS_BAR_X,coins_bar_center)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (STATUS_BAR_WIDTH,coins_bar_height)
      startVal [condition] = status_show
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    PolygonComponent sm_polygon_steps_bar
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      pos [set every repeat] = (STEPS_BAR_X,steps_bar_center)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (STATUS_BAR_WIDTH,steps_bar_height)
      startVal [condition] = status_show
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    PolygonComponent sm_polygon_status_bar_apex
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,STATUS_BAR_APEX_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (STATUS_BAR_BRACKET_WIDTH,LINE_HEIGHT)
      startVal [condition] = status_show
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    PolygonComponent sm_polygon_status_bar_base
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,STATUS_BAR_BASE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (STATUS_BAR_BRACKET_WIDTH,LINE_HEIGHT)
      startVal [condition] = status_show
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    TextComponent sm_text_coins
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (COINS_TEXT_X,COINS_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text [set every repeat] = $coins_count
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    TextComponent sm_text_coins_label
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (COINS_LABEL_TEXT_X,COINS_LABEL_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text = Coins earned
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    TextComponent sm_text_coins_properties
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.025
      pos = (COINS_PROPERTIES_TEXT_X,COINS_PROPERTIES_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text [set every repeat] = $coins_string
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    TextComponent sm_text_steps
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (STEPS_TEXT_X,STEPS_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text [set every repeat] = $steps_max - steps_count
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    TextComponent sm_text_steps_label
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (STEPS_LABEL_TEXT_X, STEPS_LABEL_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text = Steps remaining
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    TextComponent sm_text_steps_properties
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.025
      pos = (STEPS_PROPERTIES_TEXT_X,STEPS_PROPERTIES_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text [set every repeat] = $steps_string
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    TextComponent sm_text_message
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (MESSAGE_X,MESSAGE_Y)
      saveStartStop = False
      startVal [condition] = message_show
      text [set every repeat] = $message_string
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    TextComponent sm_text_instruction
      color = $INSTRUCTION_COLOR
      letterHeight = 0.02
      pos = (INSTRUCTION_X,INSTRUCTION_Y)
      saveStartStop = False
      startVal [condition] = instruction_show
      text [set every repeat] = $CONTINUE_STRING
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  Routine simple_demo_setup
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    CodeComponent sds_code_setup
      Code Type = Auto->JS
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      Begin Routine:
        # Set block conditions
        seeds_show = True
        pigeon_show = True
        status_show = False
        box_show = False
        demo_start = True

        # Get variables from conditions file
        message_string = sdc_message
        step_mean = sdc_step_mean
        step_std = sdc_step_std
  Routine status_instruction_setup
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    CodeComponent sis_code_setup
      Code Type = Auto->JS
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      Begin Routine:
        # Set conditions
        status_show = True
        pigeon_show = True
        seeds_show = True
        pigeon_flip = 0.1
        pigeon_true_x = 0
        pigeon_shown_x = pigeon_true_x

        box_show = sic_box_show
        box_width = sic_box_width
        box_height = sic_box_height
        box_x = sic_box_x
        box_y = sic_box_y
        message_string = sic_message
  Routine start_task
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    CodeComponent st_code_setup
      Code Type = Auto->JS
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      Begin Routine:
        # Setup task
        trial_start = True
        trial_number = 1
        steps_count = 0
        coins_count = 0
        last_coins_count = coins_count
        last_steps_count = steps_count

        # Set globals from conditions file variables
        task_type = tc_task_type
        block_name = tc_block_name
        steps_max = tc_steps_max
        steps_taken_to_start_trial = tc_steps_taken_to_start_trial
        steps_lost_per_error = tc_steps_lost_per_error
        coins_max = tc_coins_max
        coins_paid_to_start_trial = tc_coins_paid_to_start_trial
        coins_lost_per_error = tc_coins_lost_per_error
        coins_gained_per_correct = tc_coins_gained_per_correct
        predefined_bound_min_bonus = tc_predefined_bound_min_bonus
        predefined_bound_max_bonus = tc_predefined_bound_max_bonus
        snr_set = tc_snr_set

        # Get SNR conditions file name
        if snr_set < 10:
            snr_conditions_file = 'Resources/PigeonSNRSet0' + str(snr_set) + 'Conditions.xlsx'
        else:
            snr_conditions_file = 'Resources/PigeonSNRSet' + str(snr_set) + 'Conditions.xlsx'

        # Get Instructions Conditions file name
        instructions_conditions_file = 'Resources/Pigeon_' + task_type + '_InstructionsConditions.xlsx'

        # Control flow
        if task_type == 'online':
            online_trials_count = 10000
            predefined_trials_count = 0
        else:
            online_trials_count = 0
            predefined_trials_count = 10000
            predefined_bound_x = PREDEFINED_BOUND_X_DEFAULT

        # New block
        block_number += 1
        message_string = 'Block ' + str(block_number) + ' of ' + str(len(experiment_loop.trialList)) + '\n\n' + 'Type = ' + task_type

        # Initialize pigeon variables
        pigeon_flip = 0.1
        pigeon_true_x = 0
        pigeon_shown_x = pigeon_true_x

        # Update status graphics/text
        update_status(True, True, True)
  Routine predefined_task_setup
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    KeyboardComponent pts_kbd_update
      allowedKeys = 'up','down','left','right','space', 'c'
      correctAns = $correct_ans
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent pts_code_update
      Code Type = Auto->JS
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      Begin Routine:
        if trial_start:

            # Do this once
            trial_start = False

            # clear keyboard events
            pts_kbd_update.clearEvents()

            # Set instruction string
            if task_type == 'predefined':
                instruction_string = PREDEFINED_CHOICE_STRING
            else:
                if steps_count < min_steps_to_commit:
                    instruction_string = PREDEFINED_CHOICE_STRING
                else:
                    instruction_string = PREDEFINED_CHOICE_COMMIT_STRING

            # Default feedback
            message_string = PREDEFINED_NO_CHOICE_STRING
            choice = 'max'

            # initialize pigeon variables
            pigeon_flip = 0.1
            pigeon_true_x = 0
            pigeon_shown_x = pigeon_true_x
            pigeon_steps = [pigeon_shown_x]
            predefined_bound_x_previous = predefined_bound_x

            # Pay to play
            coins_count += coins_paid_to_start_trial
            steps_count += steps_taken_to_start_trial

            step_mean = ssc_step_mean
            step_std = ssc_step_std

            # Randomize direction, save std
            if randint(0,2)==1:
                correct_ans = 'right'
                step_mean_val = abs(step_mean)
            else:
                correct_ans = 'left'
                step_mean_val = -1*abs(step_mean)
            step_std_val = step_std

            # Save trial parameters
            thisExp.addData('step_mean_val', step_mean_val)
            thisExp.addData('step_std_val', step_std_val)
            thisExp.addData('block_number', block_number)
            thisExp.addData('trial_number', trial_number)
            thisExp.addData('correct', correct_ans)

            # Increment trial number for next time
            trial_number+=1

            # Check if we have any steps left
            if steps_count >= steps_max:
                steps_count = steps_max
                predefined_setup_loop.finished = True
                continueRoutine = False
      End Routine:
        # Parse keypress
        if task_type == 'predefined_commit' and pts_kbd_update.keys == 'c' and (steps_count > min_steps_to_commit):
            # Commit to a bound!
            thisExp.addData('predefined_bound_final', predefined_bound_x)
            thisExp.addData('predefined_bound', predefined_bound_x)
            committed_to_bound = True
            predefined_setup_loop.finished = True
        elif pts_kbd_update.keys == 'space':
            # Save bound and continue
            thisExp.addData('predefined_bound', predefined_bound_x)
            predefined_setup_loop.finished = True
        elif pts_kbd_update.keys == 'left' and predefined_bound_x <= EDGE_DISTANCE-PREDEFINED_BOUND_SMALL_DELTA:
            # Small-step larger
            predefined_bound_x += PREDEFINED_BOUND_SMALL_DELTA
        elif pts_kbd_update.keys == 'right' and predefined_bound_x >= PREDEFINED_BOUND_SMALL_DELTA:
            # Small-step smaller
            predefined_bound_x -= PREDEFINED_BOUND_SMALL_DELTA
        elif pts_kbd_update.keys == 'up' and predefined_bound_x <= EDGE_DISTANCE-PREDEFINED_BOUND_LARGE_DELTA:
            # Large-step larger
            predefined_bound_x += PREDEFINED_BOUND_LARGE_DELTA
        elif pts_kbd_update.keys == 'down' and predefined_bound_x >= PREDEFINED_BOUND_LARGE_DELTA:
            # Large-step smaller
            predefined_bound_x -= PREDEFINED_BOUND_LARGE_DELTA

        pts_kbd_update.clearEvents()
    PolygonComponent pts_polygon_abscissa
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,ABSCISSA_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (EDGE_DISTANCE*2,LINE_HEIGHT)
      startVal [time (s)] = 0
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    PolygonComponent pts_polygon_ordinate
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (ORIGIN_X,ORDINATE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ORDINATE_WIDTH,ORDINATE_HEIGHT)
      startVal [time (s)] = 0
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    PolygonComponent pts_polygon_petey_midpoint
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = red
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (pigeon_shown_x,ORDINATE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ORDINATE_WIDTH*0.9,ORDINATE_HEIGHT)
      startVal [time (s)] = 0.0
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    PolygonComponent pts_polygon_left_bound
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor [set every repeat] = $PREDEFINED_BOUND_COLOR
      lineWidth = 3
      ori = 90
      pos [set every repeat] = (-predefined_bound_x,PREDEFINED_BOUND_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (PREDEFINED_BOUND_WIDTH,PREDEFINED_BOUND_HEIGHT)
      startVal [time (s)] = 0.0
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    PolygonComponent pts_polygon_right_bound
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = $PREDEFINED_BOUND_COLOR
      lineWidth = 3
      ori = 90
      pos [set every repeat] = (predefined_bound_x,PREDEFINED_BOUND_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (PREDEFINED_BOUND_WIDTH,PREDEFINED_BOUND_HEIGHT)
      startVal [time (s)] = 0.0
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    PolygonComponent pts_polygon_stay_left
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = $PREDEFINED_BOUND_MARKER_COLOR
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (-predefined_bound_x_previous,PREDEFINED_BOUND_MARKER_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (PREDEFINED_BOUND_MARKER_SZ,PREDEFINED_BOUND_MARKER_SZ)
      startVal [time (s)] = 0
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    PolygonComponent pts_polygon_stay_right
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = $PREDEFINED_BOUND_MARKER_COLOR
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (predefined_bound_x_previous,PREDEFINED_BOUND_MARKER_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (PREDEFINED_BOUND_MARKER_SZ,PREDEFINED_BOUND_MARKER_SZ)
      startVal [time (s)] = 0
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    ImageComponent pts_image_pigeon
      image = Resources/pigeon.png
      pos [set every repeat] = (pigeon_shown_x,ORIGIN_Y)
      saveStartStop = False
      size [set every repeat] = (pigeon_flip, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent pts_image_right_seeds
      image = Resources/seeds.png
      pos = (EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size = (SEEDS_WIDTH,SEEDS_HEIGHT)
      startVal [time (s)] = 0.0
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    ImageComponent pts_image_left_seeds
      image = Resources/seeds.png
      pos = (-EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size = (SEEDS_WIDTH,SEEDS_HEIGHT)
      startVal [time (s)] = 0.0
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    PolygonComponent pts_polygon_coins_bar
      fillColor = white
      pos [set every repeat] = (COINS_BAR_X,coins_bar_center)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (STATUS_BAR_WIDTH,coins_bar_height)
      startVal [time (s)] = 0.0
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    PolygonComponent pts_polygon_steps_bar
      fillColor = white
      pos [set every repeat] = (STEPS_BAR_X,steps_bar_center)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (STATUS_BAR_WIDTH,steps_bar_height)
      startVal [time (s)] = 0.0
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    PolygonComponent pts_polygon_status_bar_apex
      fillColor = black
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,STATUS_BAR_APEX_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (STATUS_BAR_BRACKET_WIDTH,LINE_HEIGHT)
      startVal [time (s)] = 0.0
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    PolygonComponent pts_polygon_status_bar_base
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,STATUS_BAR_BASE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (STATUS_BAR_BRACKET_WIDTH,LINE_HEIGHT)
      startVal [time (s)] = 0.0
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    TextComponent pts_text_coins
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (COINS_TEXT_X,COINS_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $coins_count
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    TextComponent pts_text_coins_label
      color = black
      letterHeight = 0.03
      pos = (COINS_LABEL_TEXT_X,COINS_LABEL_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Coins earned
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    TextComponent pts_text_coins_properties
      letterHeight = 0.025
      pos = (COINS_PROPERTIES_TEXT_X,COINS_PROPERTIES_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $coins_string
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    TextComponent pts_text_steps
      color = black
      letterHeight = 0.03
      pos = (STEPS_TEXT_X,STEPS_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $steps_max - steps_count
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    TextComponent pts_text_steps_label
      color = black
      letterHeight = 0.03
      pos = (STEPS_LABEL_TEXT_X,STEPS_LABEL_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Steps remaining
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    TextComponent pts_text_steps_properties
      letterHeight = 0.025
      pos = (STEPS_PROPERTIES_TEXT_X,STEPS_PROPERTIES_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $steps_string
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    TextComponent pts_text_instruction
      color = $INSTRUCTION_COLOR
      letterHeight = 0.02
      pos = (INSTRUCTION_X,INSTRUCTION_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_string
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    TextComponent pts_text_hint
      letterHeight = 0.03
      pos [set every frame] = (ORIGIN_X,MESSAGE_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        -> move closer to save steps <-
        <- move farther to increase accuracy ->
    TextComponent pts_text_hint_2
      color = 0.1294, 0.8667, 0.1294
      letterHeight = 0.02
      pos [set every frame] = (ORIGIN_X,0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The light green tics indicate your last choice.
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  Routine predefined_task_run
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    KeyboardComponent ptr_kbd_response
      allowedKeys = 'space', 'up', 'down', 'left', 'right'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
      store = nothing
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    CodeComponent ptr_code_update
      Code Type = Auto->JS
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      Begin Routine:
        # Check for end of task (no more steps)
        if (committed_to_bound and (steps_count > min_steps_to_commit)) or steps_count >= steps_max:

            # Clean up
            if steps_count > steps_max:
                steps_count = steps_max
            predefined_move_loop.finished = True
            predefined_trial_loop.finished = True
            committed_to_bound = False

             # Show no steps remaining and end block string
            steps_count = steps_max
            update_status(False,False,True)
            set_block_end_string()

            # Save results
            thisExp.addData('steps_count', steps_count)
            thisExp.addData('pigeon_steps', pigeon_steps)
            thisExp.addData('coins_count', coins_count)
            thisExp.addData('choice', 'none')
            thisExp.addData('predefined_bound', predefined_bound_x)
            thisExp.addData('predefined_bound_final', predefined_bound_x)

            # Set end of block message, which also determines bonus
            set_block_end_string()
            thisExp.addData('bonus', bonus_count)

        else:

            # Increment the counter and move the pigeon
            steps_count += 1
            move_pigeon(step_mean_val, step_std_val)
            pigeon_steps.append(pigeon_shown_x)

            # Update steps status bar
            update_status(False, False, True)

            # Check bound crossings
            still_going = False
            if pigeon_true_x >= predefined_bound_x:
                choice = 'right'
            elif pigeon_true_x <= -predefined_bound_x:
                choice = 'left'
            elif steps_count >= steps_max:
                choice = 'max'
            else:
                still_going = True

            # Handle bound crossings
            if not still_going:

                if choice == correct_ans:
                    coins_count += coins_gained_per_correct
                    set_trial_end_string(CORRECT_STRING)
                elif choice != 'max':
                    coins_count -= coins_lost_per_error
                    steps_count += steps_lost_per_error
                    set_trial_end_string(ERROR_STRING)

                # Update coins status bar, feedback message
                update_status(False, True, False)

                # Save results
                thisExp.addData('pigeon_steps', pigeon_steps)
                thisExp.addData('coins_count', coins_count)
                thisExp.addData('steps_count', steps_count)
                thisExp.addData('choice', choice)

                # Drop out of pigeon movement loop
                predefined_move_loop.finished = True
      End Routine:
        if ptr_kbd_response.keys:

            # Clear keyboard
            ptr_kbd_response.clearEvents()

            # Set no choice
            choice = 'none'

            # Set feedback message, update status, and abort
            set_trial_end_string(PREDEFINED_ABORT_STRING)
            predefined_move_loop.finished = True

        # Save results
        thisExp.addData('pigeon_steps', pigeon_steps)
        thisExp.addData('coins_count', coins_count)
        thisExp.addData('steps_count', steps_count)
        thisExp.addData('choice', choice)
    PolygonComponent ptr_polygon_abscissa
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,ABSCISSA_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (EDGE_DISTANCE*2,LINE_HEIGHT)
      startVal [time (s)] = 0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
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    PolygonComponent ptr_polygon_ordinate
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (ORIGIN_X,ORDINATE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ORDINATE_WIDTH,ORDINATE_HEIGHT)
      startVal [time (s)] = 0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
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    PolygonComponent ptr_polygon_petey_midpoint
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = red
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (pigeon_shown_x,ORDINATE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ORDINATE_WIDTH*0.9,ORDINATE_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
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    PolygonComponent ptr_polygon_left_bound
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor [set every repeat] = $PREDEFINED_BOUND_COLOR
      lineWidth = 3
      ori = 90
      pos [set every repeat] = (-predefined_bound_x,PREDEFINED_BOUND_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (PREDEFINED_BOUND_WIDTH,PREDEFINED_BOUND_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
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    PolygonComponent ptr_polygon_right_bound
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor [set every repeat] = $PREDEFINED_BOUND_COLOR
      lineWidth = 3
      ori = 90
      pos [set every repeat] = (predefined_bound_x,PREDEFINED_BOUND_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (PREDEFINED_BOUND_WIDTH,PREDEFINED_BOUND_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
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    ImageComponent ptr_image_pigeon
      image = Resources/pigeon.png
      pos [set every repeat] = (pigeon_shown_x,ORIGIN_Y)
      saveStartStop = False
      size [set every repeat] = (pigeon_flip, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
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    ImageComponent ptr_image_right_seeds
      image = Resources/seeds.png
      pos = (EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size = (SEEDS_WIDTH,SEEDS_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
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    ImageComponent ptr_image_left_seeds
      image = Resources/seeds.png
      pos = (-EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size = (SEEDS_WIDTH,SEEDS_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
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    PolygonComponent ptr_polygon_coins_bar
      fillColor = white
      pos [set every repeat] = (COINS_BAR_X,coins_bar_center)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (STATUS_BAR_WIDTH,coins_bar_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
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    PolygonComponent ptr_polygon_steps_bar
      fillColor = white
      pos [set every repeat] = (STEPS_BAR_X,steps_bar_center)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (STATUS_BAR_WIDTH,steps_bar_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
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    PolygonComponent ptr_polygon_status_bar_apex
      fillColor = black
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,STATUS_BAR_APEX_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (STATUS_BAR_BRACKET_WIDTH,LINE_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
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    PolygonComponent ptr_polygon_status_bar_base
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,STATUS_BAR_BASE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (STATUS_BAR_BRACKET_WIDTH,LINE_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
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    TextComponent ptr_text_coins
      color = black
      letterHeight = 0.03
      pos = (COINS_TEXT_X,COINS_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
      text [set every repeat] = $coins_count
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    TextComponent ptr_text_coins_label
      color = black
      letterHeight = 0.03
      pos = (COINS_LABEL_TEXT_X,COINS_LABEL_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
      text = Coins earned
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    TextComponent ptr_text_coins_properties
      letterHeight = 0.025
      pos = (COINS_PROPERTIES_TEXT_X,COINS_PROPERTIES_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
      text [set every repeat] = $coins_string
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    TextComponent ptr_text_steps
      color = black
      letterHeight = 0.03
      pos = (STEPS_TEXT_X,STEPS_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
      text [set every repeat] = $steps_max - steps_count
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    TextComponent ptr_text_steps_label
      color = black
      letterHeight = 0.03
      pos = (STEPS_LABEL_TEXT_X,STEPS_LABEL_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
      text = Steps remaining
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    TextComponent ptr_text_steps_properties
      letterHeight = 0.025
      pos = (STEPS_PROPERTIES_TEXT_X,STEPS_PROPERTIES_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
      text [set every repeat] = $steps_string
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    TextComponent ptr_text_instruction
      color = $INSTRUCTION_COLOR
      letterHeight = 0.02
      pos = (INSTRUCTION_X,INSTRUCTION_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PREDEFINED_UPDATE_INTERVAL
      text [set every repeat] = $PREDEFINED_ABORT_INSTRUCTION
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  Routine general_instructions_setup
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    CodeComponent gis_code_setup
      Code Type = Auto->JS
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      Begin Routine:
        status_show = False
        box_show = False
        pigeon_show = gic_pigeon_show
        seeds_show = gic_seeds_show
        message_string = gic_message
  Routine final_message
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    CodeComponent fm_code_setup
      Code Type = Auto->JS
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      Begin Routine:
        message_string = 'Finished, fantastic job!\nYou earned ' + str(bonus_count) + ' bonuses.'
  Routine consent
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    TextboxComponent consent_txt
      bold = False
      editable = False
      fillColor = -0.1765, -0.1765, -0.1765
      letterHeight = 0.023
      size = (0.75, 0.68)
      startVal [time (s)] = 0.0
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      text:
        This is an academic research project conducted through the University of Pennsylvania. In this game, a pigeon will wander from the center of the screen to one of two seed piles on the left or right. Your goal is either to guess the direction the pigeon will ultimately choose or set a cut-off for the pigeon’s movement to make a choice based on their current location.

        The estimated total time is about 30 minutes.

        You must be at least 18 years old to participate. Your participation in this research is voluntary, which means you can choose whether or not to participate without negative consequences. Your anonymity is assured: the researchers who have requested your participation will not receive any personal information about you except your previously provided Prolific demographic data such as gender, ethnicity, and age. The de-identified data may be stored and distributed for future research studies without additional informed consent.

        If you have questions about this research, please contact Alice Dallstream by emailing adalls@pennmedicine.upenn.edu or Josh Gold by emailing jigold@pennmedicine.upenn.edu.

        If you have questions, concerns, or complaints regarding your participation in this research study, or if you have any questions about your rights as a research subject and you cannot reach a member of the study team, you may contact the Office of Regulatory Affairs at the University of Pennsylvania by calling (215) 898-2614 or emailing irb@pobox.upenn.edu.
    PolygonComponent consent_box
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.4, -0.4)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent consent_mouse
      clickable = consent_box
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextboxComponent consent_acknowledge
      anchor = center-left
      bold = False
      editable = False
      fillColor = -0.1765, -0.1765, -0.1765
      letterHeight = 0.023
      pos = (-0.36, -0.42)
      size = (0.71, 0.08)
      startVal [time (s)] = 0.0
      text = I have read the information above and agree to take part in this study. I understand that I may withdraw my consent at any time before I complete the tasks.
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  Routine show_final_message
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    KeyboardComponent sfm_kbd_continue
      allowedKeys = 'space', 'up', 'down', 'left', 'right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    CodeComponent sfm_code_update
      Code Type = Auto->JS
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      Begin Experiment:
        box_width = 0
        box_height = 0
        box_x = 0
        box_y = 0
      Begin Routine:
        # Clear all keyboard events
        sm_kbd_continue.clearEvents()
      End Routine:
        # Ick, but whatever. Makes sure that we don't ever
        # drop unexpectedly out of a move loop without
        # resetting
        trial_start = True
    TextComponent sfm_text_message
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (MESSAGE_X,MESSAGE_Y)
      saveStartStop = False
      startVal [condition] = message_show
      text [set every repeat] = $message_string
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    TextComponent sfm_text_steps_properties
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.025
      pos = (STEPS_PROPERTIES_TEXT_X,STEPS_PROPERTIES_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text [set every repeat] = $steps_string
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    TextComponent sfm_text_steps_label
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (STEPS_LABEL_TEXT_X, STEPS_LABEL_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text = Steps remaining
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    TextComponent sfm_text_steps
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (STEPS_TEXT_X,STEPS_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text [set every repeat] = $steps_max - steps_count
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    TextComponent sfm_text_coins_properties
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.025
      pos = (COINS_PROPERTIES_TEXT_X,COINS_PROPERTIES_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text [set every repeat] = $coins_string
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    TextComponent sfm_text_coins_label
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (COINS_LABEL_TEXT_X,COINS_LABEL_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text = Coins earned
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    TextComponent sfm_text_coins
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (COINS_TEXT_X,COINS_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text [set every repeat] = $coins_count
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    PolygonComponent sfm_polygon_status_bar_base
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,STATUS_BAR_BASE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (STATUS_BAR_BRACKET_WIDTH,LINE_HEIGHT)
      startVal [condition] = status_show
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    PolygonComponent sfm_polygon_status_bar_apex
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,STATUS_BAR_APEX_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (STATUS_BAR_BRACKET_WIDTH,LINE_HEIGHT)
      startVal [condition] = status_show
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    PolygonComponent sfm_polygon_steps_bar
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      pos [set every repeat] = (STEPS_BAR_X,steps_bar_center)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (STATUS_BAR_WIDTH,steps_bar_height)
      startVal [condition] = status_show
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    PolygonComponent sfm_polygon_coin_bar
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      pos [set every repeat] = (COINS_BAR_X,coins_bar_center)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (STATUS_BAR_WIDTH,coins_bar_height)
      startVal [condition] = status_show
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    ImageComponent sfm_image_petey
      image = Resources/pigeon.png
      pos [set every repeat] = (pigeon_shown_x,ORIGIN_Y)
      saveStartStop = False
      size [set every repeat] = (pigeon_flip, 0.1)
      startVal [condition] = pigeon_show
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    ImageComponent sfm_image_left_seeds
      image = Resources/seeds.png
      pos = (-EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size = (SEEDS_WIDTH,SEEDS_HEIGHT)
      startVal [condition] = seeds_show
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    ImageComponent sfm_image_right_seeds
      image = Resources/seeds.png
      pos = (EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size = (SEEDS_WIDTH,SEEDS_HEIGHT)
      startVal [condition] = seeds_show
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    PolygonComponent sfm_polygon_petey_midpoint
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (pigeon_shown_x,ORDINATE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ORDINATE_WIDTH*0.9,ORDINATE_HEIGHT)
      startVal [condition] = status_show
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    PolygonComponent sfm_polygon_ordinate
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (ORIGIN_X,ORDINATE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ORDINATE_WIDTH,ORDINATE_HEIGHT)
      startVal [condition] = status_show
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    PolygonComponent sfm_polygon_abscissa
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,ABSCISSA_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ABSCISSA_WIDTH,LINE_HEIGHT)
      startVal [condition] = pigeon_show
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    PolygonComponent sfm_polygon_box
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 3
      pos [set every repeat] = (box_x,box_y)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (box_width,box_height)
      startVal [condition] = box_show
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    TextComponent sfm_text_instruction
      color = $INSTRUCTION_COLOR
      letterHeight = 0.02
      pos = (INSTRUCTION_X,INSTRUCTION_Y)
      saveStartStop = False
      startVal [condition] = instruction_show
      text [set every repeat] = $CONTINUE_STRING
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  Routine setup_instructions_message
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        message_string = ic_message_string
Flow
  Routine consent
  Routine experiment_setup
  LoopInitiator general_instructions_loop loopType="TrialHandler"
    conditionsFile = Resources/PigeonGeneralInstructionsConditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'gic_message': 'Hi!\nThank you for participating in this experiment.\nPressing Esc will end this session.', 'gic_pigeon_show': False, 'gic_seeds_show': False},
      {'gic_message': 'This is Petey the Pigeon.', 'gic_pigeon_show': True, 'gic_seeds_show': False},
      {'gic_message': 'Petey is very hungry and sees two piles of seeds nearby. However, one pile is good and the other has gone bad.\nIn this task, you will see Petey walking back and forth between the piles to figure out which one he should eat. He will gradually tend toward the correct pile and remain there, but your job is to predict which pile that is before that happens.', 'gic_pigeon_show': True, 'gic_seeds_show': True},
      {'gic_message': "Let's see Petey move!", 'gic_pigeon_show': True, 'gic_seeds_show': True}]
    Routine general_instructions_setup
    Routine show_message
  LoopTerminator general_instructions_loop
  LoopInitiator simple_demo_block_loop loopType="TrialHandler"
    conditionsFile = Resources/PigeonSimpleDemoConditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sdc_message': 'Sometimes Petey will move quickly and directly towards one of the piles of seeds.', 'sdc_step_mean': 0.05, 'sdc_step_std': 0.1},
      {'sdc_message': 'Sometimes Petey meanders a bit more.', 'sdc_step_mean': 0.02, 'sdc_step_std': 0.1}]
    Routine simple_demo_setup
    Routine show_message
    LoopInitiator simple_demo_trial_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1000
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      Routine simple_demo
    LoopTerminator simple_demo_trial_loop
  LoopTerminator simple_demo_block_loop
  LoopInitiator status_instruction_loop loopType="TrialHandler"
    conditionsFile = Resources/PigeonStatusInstructionsConditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sic_message': "Great!\nNow that you have the basic idea, let's get started with the task.", 'sic_box_show': False, 'sic_box_x': 0, 'sic_box_y': 0, 'sic_box_width': 0, 'sic_box_height': 0},
      {'sic_message': 'Your job is to determine, as quickly and accurately as possible, which seeds Petey will choose on each given trial, based on his initial movements.', 'sic_box_show': False, 'sic_box_x': 0, 'sic_box_y': 0, 'sic_box_width': 0, 'sic_box_height': 0},
      {'sic_message': "We show a line where Petey starts and a red line at Petey's midpoint so you can see exactly how far away he has moved in either direction.", 'sic_box_show': True, 'sic_box_x': 0, 'sic_box_y': 0, 'sic_box_width': 0.25, 'sic_box_height': 0.25},
      {'sic_message': 'You will receive coins for each correct answer and lose coins for each incorrect answer. You also may have to pay coins to start each trial. You can get a bonus for reaching a certain number of coins.\nThis section shows the settings for the current block of trials.', 'sic_box_show': True, 'sic_box_x': -0.55, 'sic_box_y': -0.3, 'sic_box_width': 0.4, 'sic_box_height': 0.15},
      {'sic_message': 'You will receive coins for each correct answer and lose coins for each incorrect answer. You also may have to pay coins to start each trial. You can get a bonus for reaching a certain number of coins.\nThis bar tells you how many coins you have earned so far.', 'sic_box_show': 'TRUE', 'sic_box_x': -0.15, 'sic_box_y': -0.3, 'sic_box_width': 0.3, 'sic_box_height': 0.3}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
    Routine status_instruction_setup
    Routine show_message
  LoopTerminator status_instruction_loop
  LoopInitiator experiment_loop loopType="TrialHandler"
    conditionsFile = Resources/PigeonTaskConditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'tc_task_type': 'predefined_commit', 'tc_block_name': 'lowSNRlowcost', 'tc_snr_set': 1, 'tc_steps_max': 1000, 'tc_steps_taken_to_start_trial': 1, 'tc_steps_lost_per_error': 0, 'tc_coins_max': 300, 'tc_coins_paid_to_start_trial': 0, 'tc_coins_lost_per_error': 0, 'tc_coins_gained_per_correct': 1, 'tc_predefined_bound_min_bonus': 0, 'tc_predefined_bound_max_bonus': 0.0025},
      {'tc_task_type': 'predefined_commit', 'tc_block_name': 'lowSNRhicost', 'tc_snr_set': 1, 'tc_steps_max': 1000, 'tc_steps_taken_to_start_trial': 1, 'tc_steps_lost_per_error': 0, 'tc_coins_max': 50, 'tc_coins_paid_to_start_trial': 0, 'tc_coins_lost_per_error': 4, 'tc_coins_gained_per_correct': 1, 'tc_predefined_bound_min_bonus': 0.4, 'tc_predefined_bound_max_bonus': 0.6},
      {'tc_task_type': 'predefined_commit', 'tc_block_name': 'highSNRlowcost', 'tc_snr_set': 2, 'tc_steps_max': 1000, 'tc_steps_taken_to_start_trial': 1, 'tc_steps_lost_per_error': 0, 'tc_coins_max': 400, 'tc_coins_paid_to_start_trial': 0, 'tc_coins_lost_per_error': 0, 'tc_coins_gained_per_correct': 1, 'tc_predefined_bound_min_bonus': 0, 'tc_predefined_bound_max_bonus': 0.01},
      {'tc_task_type': 'predefined_commit', 'tc_block_name': 'highSNRhicost', 'tc_snr_set': 2, 'tc_steps_max': 1000, 'tc_steps_taken_to_start_trial': 1, 'tc_steps_lost_per_error': 0, 'tc_coins_max': 270, 'tc_coins_paid_to_start_trial': 0, 'tc_coins_lost_per_error': 4, 'tc_coins_gained_per_correct': 1, 'tc_predefined_bound_min_bonus': 0.13, 'tc_predefined_bound_max_bonus': 0.2}]
    Routine start_task
    Routine show_message
    LoopInitiator instructions_loop loopType="TrialHandler"
      conditionsFile = $instructions_conditions_file
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine setup_instructions_message
      Routine show_message
    LoopTerminator instructions_loop
    LoopInitiator online_trial_loop loopType="TrialHandler"
      conditionsFile = $snr_conditions_file
      loopType = fullRandom
      nReps = online_trials_count
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      LoopInitiator online_move_loop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = STEPS_MAX_PER_TRIAL
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        Routine online_task_run
      LoopTerminator online_move_loop
      Routine show_message
    LoopTerminator online_trial_loop
    LoopInitiator predefined_trial_loop loopType="TrialHandler"
      conditionsFile = $snr_conditions_file
      loopType = random
      nReps = predefined_trials_count
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      LoopInitiator predefined_setup_loop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 1000
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        Routine predefined_task_setup
      LoopTerminator predefined_setup_loop
      LoopInitiator predefined_move_loop loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = STEPS_MAX_PER_TRIAL
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        Routine predefined_task_run
      LoopTerminator predefined_move_loop
      Routine show_message
    LoopTerminator predefined_trial_loop
  LoopTerminator experiment_loop
  Routine final_message
  Routine show_final_message
