PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Completed URL = https://app.prolific.com/submissions/complete?cc=C1MSKA9I
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['Resources/cactus.png', 'Resources/moon.png', 'Resources/Pigeon_change_InstructionsConditions.xlsx', 'Resources/Pigeon_fixed_InstructionsConditions.xlsx', 'Resources/Pigeon_mixed_InstructionsConditions.xlsx', 'Resources/pigeon.png', 'Resources/PigeonGeneralInstructionsConditions.xlsx', 'Resources/PigeonSimpleDemoConditions.xlsx', 'Resources/PigeonStatusInstructionsConditions.xlsx', 'Resources/PigeonTaskConditions.xlsx', 'Resources/seeds.png', 'Resources/sun.png', 'Resources/tree.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = pigeon_task
  keyboardBackend = ioHub
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Routines
  Routine experiment_setup
    CodeComponent es_code_setup
      Code Type = Both
      Before Experiment:
        def calculate_median(arr):
            # Changepoint timing is always derived from the median RT (in steps) of the
            # preceding fixed-SNR block, rounded to an integer step count.
            if not arr:
                return 10
            arr.sort()
            n = len(arr)
            mid = n // 2
            if n % 2 == 0:
                med = (arr[mid - 1] + arr[mid]) / 2
            else:
                med = arr[mid]
            return round(med)


        def trim_warmup_trials(arr):
            # Drops the first RT_WARMUP_TRIALS_TO_DISCARD entries (if enough trials exist)
            # before computing changepoint timing / RT-extremity stats, so early
            # "getting used to the task" RTs at the start of a block don't skew either.
            if len(arr) > RT_WARMUP_TRIALS_TO_DISCARD:
                return arr[RT_WARMUP_TRIALS_TO_DISCARD:]
            return arr


        def check_rt_extremity(rts):
            # Flags participants whose RT distribution on a fixed-SNR block is too extreme
            # to be usable: guessing on (almost) every trial (median RT below
            # RT_TOO_FAST_STEPS) or mostly not responding within the trial (median RT above
            # RT_TOO_SLOW_STEPS, or too large a fraction of trials timing out at
            # STEPS_MAX_PER_TRIAL). Returns None if the RTs look usable, otherwise a short
            # reason string used to end the session early.
            if not rts:
                return None
            sorted_rts = sorted(rts)
            n = len(sorted_rts)
            mid = n // 2
            if n % 2 == 0:
                median_rt = (sorted_rts[mid - 1] + sorted_rts[mid]) / 2
            else:
                median_rt = sorted_rts[mid]
            timeout_fraction = len([rt for rt in rts if rt >= STEPS_MAX_PER_TRIAL]) / n
            if median_rt < RT_TOO_FAST_STEPS:
                return "too_fast"
            if median_rt > RT_TOO_SLOW_STEPS or timeout_fraction > RT_TIMEOUT_FRACTION_MAX:
                return "too_slow"
            return None
      Before JS Experiment:
        // Changepoint timing is always derived from the median RT (in steps) of the preceding
        // fixed-SNR block, rounded to an integer step count.
        function calculate_median(arr) {
            if (arr.length === 0) return 10;

            arr.sort((a, b) => a - b);
            let n = arr.length;
            let mid = Math.floor(n / 2);

            return Math.round(n % 2 === 0 ? (arr[mid - 1] + arr[mid]) / 2 : arr[mid]);
        }

        // Drops the first RT_WARMUP_TRIALS_TO_DISCARD entries (if enough trials exist) before
        // computing changepoint timing / RT-extremity stats, so early "getting used to the task"
        // RTs at the start of a block don't skew either.
        function trim_warmup_trials(arr) {
            return arr.length > RT_WARMUP_TRIALS_TO_DISCARD ? arr.slice(RT_WARMUP_TRIALS_TO_DISCARD) : arr;
        }

        // Flags participants whose RT distribution on a fixed-SNR block is too extreme to be
        // usable: guessing on (almost) every trial (median RT below RT_TOO_FAST_STEPS) or mostly
        // not responding within the trial (median RT above RT_TOO_SLOW_STEPS, or too large a
        // fraction of trials timing out at STEPS_MAX_PER_TRIAL). Returns null if the RTs look
        // usable, otherwise a short reason string used to end the session early (see fm_code_setup).
        function check_rt_extremity(rts) {
            if (rts.length === 0) return null;
            let sorted = rts.slice().sort((a, b) => a - b);
            let n = sorted.length;
            let mid = Math.floor(n / 2);
            let median_rt = n % 2 === 0 ? (sorted[mid - 1] + sorted[mid]) / 2 : sorted[mid];
            let timeout_fraction = rts.filter((rt) => rt >= STEPS_MAX_PER_TRIAL).length / n;
            if (median_rt < RT_TOO_FAST_STEPS) return "too_fast";
            if (median_rt > RT_TOO_SLOW_STEPS || timeout_fraction > RT_TIMEOUT_FRACTION_MAX) return "too_slow";
            return null;
        }
      Begin Experiment:
        # Global Settings
        exp_type = 'snr' #'reward'

        # Global CONSTANTS and variables

        # Local variables needed in JS:
        still_going = True
        choice = ''
        experiment_task_conditions_file = "Resources/PigeonsTaskConditions" + str(randint(1,4)) + ".xlsx"
        dummy_mode = True
        # Colors
        # For JS:
        #white = new util.Color([1, 1, 1]);
        #grey = new util.Color([0.2, 0.2, 0.2]);
        #yellow = new util.Color([1, 1, 0]);
        #green = new util.Color([-1, 0, -1]);
        #lightgreen = new util.Color([0, 1, 0]);
        #black = new util.Color([-1, -1, -1]);
        #red = new util.Color([1, 0, 0]);
        white=[1,1,1]
        grey=[0.2,0.2,0.2]
        yellow=[1,1,0]
        green=[-1,0,-1]
        lightgreen=[0,1,0]
        black=[-1,-1,-1]
        red=[1,0,0]

        # Screen
        ORIGIN_X = 0
        ORIGIN_Y = 0
        SEEDS_WIDTH = 0.1
        SEEDS_HEIGHT = 0.1
        EDGE_DISTANCE = 0.75
        ENV_WIDTH = 0.15
        ENV_HEIGHT = 0.1
        ENV_X = EDGE_DISTANCE - 0.1
        ENV_Y = ORIGIN_Y + 0.4
        SEEDS_SCALE = 1;

        # Messages
        INSTRUCTION_X = ORIGIN_X
        INSTRUCTION_Y = 0.45
        INSTRUCTION_COLOR = yellow
        CHOICE_STRING = 'Press Left or Right arrow to choose'
        CONTINUE_STRING = 'Press Spacebar or any arrow to continue'
        PREDEFINED_CHOICE_STRING='Press Left/Up for small/large increases, Right/Down for small/large decreases,\nSpacebar to start the trial.'
        PREDEFINED_CHOICE_COMMIT_STRING='Press Left/Up for small/large increases, Right/Down for small/large decreases,\nc to commit or Spacebar to start the trial.'
        PREDEFINED_NO_CHOICE_STRING='Petey failed to reach the bound\nConsider moving it closer.'
        PREDEFINED_ABORT_INSTRUCTION='Press Spacebar or any arrow to abort trial'
        PREDEFINED_ABORT_STRING='Aborted early'
        CORRECT_STRING='Correct'
        ERROR_STRING='Error'
        NO_CHOICE_STRING = 'Failed to respond\nPlease respond more quickly'
        RT_TOO_FAST_MESSAGE = 'Session ended early.\n\nYour responses were consistently faster than this task requires to make a real decision. Thank you for participating.'
        RT_TOO_SLOW_MESSAGE = 'Session ended early.\n\nYour responses were consistently slower than this task expects, or you were frequently not responding in time. Thank you for participating.'
        MESSAGE_X = ORIGIN_X
        MESSAGE_Y = 0.3
        instruction_show = True
        instruction_string = CONTINUE_STRING
        message_show = True
        message_string = ''
        steps_string = ' '
        coins_string = ' '
        if exp_type == 'reward':
            high_env_img = 'Resources/tree.png'
            low_env_img = 'Resources/cactus.png'
        elif exp_type == 'snr':
            high_env_img = 'Resources/sun.png'
            low_env_img = 'Resources/moon.png'
        env_img = high_env_img
        steps_label = 'Steps remaining'
        steps_text = '200'
        coins_text = '0'
        step_mean_vals = []
        step_std_vals = []

        # Status symbols
        LINE_HEIGHT = 0.1
        STATUS_BAR_HEIGHT = 0.2
        STATUS_BAR_WIDTH = 0.1
        ENV_BAR_HEIGHT = 0.02
        ENV_BAR_WIDTH = 0.1
        STATUS_BAR_BASE_Y = ORIGIN_Y-0.4
        STATUS_BAR_APEX_Y = STATUS_BAR_BASE_Y+STATUS_BAR_HEIGHT
        STATUS_BAR_BRACKET_WIDTH =  0.35
        ABSCISSA_Y = ORIGIN_Y-0.05
        ABSCISSA_WIDTH = EDGE_DISTANCE*2
        ORDINATE_Y = ORIGIN_Y+0.05
        ORDINATE_WIDTH = 0.2
        ORDINATE_HEIGHT = 0.01
        COINS_BAR_X = -0.1
        COINS_TEXT_X = -0.1
        COINS_TEXT_Y = -0.37
        COINS_LABEL_TEXT_X = -0.28
        COINS_LABEL_TEXT_Y = -0.2
        COINS_PROPERTIES_TEXT_X = -0.55
        COINS_PROPERTIES_TEXT_Y = -0.3
        STEPS_BAR_X = 0.1
        STEPS_TEXT_X = 0.1
        STEPS_TEXT_Y = -0.37
        STEPS_LABEL_TEXT_X = 0.35
        STEPS_LABEL_TEXT_Y = -0.2
        STEPS_PROPERTIES_TEXT_X = 0.55
        STEPS_PROPERTIES_TEXT_Y = -0.3
        steps_bar_height = 0
        steps_bar_center = 0
        coins_bar_height = 0
        coins_bar_center = 0
        env_bar_height = 0
        env_bar_width = 0
        env_bar_center = ENV_X - ENV_BAR_WIDTH/2

        # Predefined bound
        PREDEFINED_BOUND_COLOR = green
        PREDEFINED_BOUND_WIDTH = 0.2
        PREDEFINED_BOUND_HEIGHT = 0.01
        PREDEFINED_BOUND_Y = ORIGIN_Y+0.05
        PREDEFINED_BOUND_SMALL_DELTA = 0.003
        PREDEFINED_BOUND_LARGE_DELTA = 0.05
        PREDEFINED_BOUND_X_DEFAULT = 0.05
        PREDEFINED_BOUND_MARKER_SZ = 0.01
        PREDEFINED_BOUND_MARKER_Y = 0.16
        PREDEFINED_BOUND_MARKER_COLOR = lightgreen
        predefined_bound_x = PREDEFINED_BOUND_X_DEFAULT
        predefined_bound_x_previous = predefined_bound_x
        committed_to_bound = False
        predefined_bound_min_bonus = 0
        predefined_bound_max_bonus = 0
        min_steps_to_commit = 100

        # Stimulus display
        seeds_show = False
        pigeon_show = False
        status_show = False
        box_show = False

        # Timing/counting
        UPDATE_INTERVAL = 0.200
        ITI = 0.7
        PREDEFINED_UPDATE_INTERVAL = 0.5
        block_number = 0
        cal_block_number = 0
        test_block_number = 0
        trial_number = 0
        trial_start = True
        bonus_count = 0

        # Task conditions
        STEPS_MAX_PER_TRIAL = 50
        low_switch_time = STEPS_MAX_PER_TRIAL
        high_switch_time = STEPS_MAX_PER_TRIAL
        # RT-extremity exclusion thresholds (in pigeon steps), from the 1st/99th percentiles of
        # per-subject median RT on non-changepoint blocks in the existing cohort-3 (MXSC) data.
        # Checked once at the end of each of the two fixed (non-changepoint) blocks.
        RT_WARMUP_TRIALS_TO_DISCARD = 10
        RT_TOO_FAST_STEPS = 3
        RT_TOO_SLOW_STEPS = 25
        RT_TIMEOUT_FRACTION_MAX = 0.2
        should_exclude_participant = False
        exclusion_message = ''
        coins_gained_per_correct = 1
        coins_lost_per_error = 1
        coins_paid_to_start_trial = 0
        coins_count = 0
        coins_max = 100
        steps_lost_per_error = 0
        steps_taken_to_start_trial = 1
        steps_count = 0
        steps_in_trial = 0
        steps_max = 11
        step_mean_val = 0.02
        step_std_val = 0.1
        last_coins_count = 0
        last_steps_count = 0
        changepoint = False

        # Pigeon position
        pigeon_flip = 0.1
        pigeon_true_x = 0
        pigeon_shown_x = pigeon_true_x
        pigeon_steps = []

        # Function to move pigeon, depends on random variables
        #   Note -- if you change this code, set code type to
        #   "Auto->JS" first to make sure the JS code gets updated,
        #   then set code type back to "both" and add the following
        #   line at the top of this function:
        #    global pigeon_flip, pigeon_true_x, pigeon_shown_x
        def move_pigeon_function(step_mean, step_std):
            global pigeon_flip, pigeon_true_x, pigeon_shown_x

            for i in range(10):
                u = 2*random()-1
                v = 2*random()-1
                r = u*u + v*v
                if r!=0 and r<1:
                    break
            new_step = step_mean + step_std*u*sqrt(-2*log(r)/r)
            if new_step > 0:
                pigeon_flip = -0.1
            else:
                pigeon_flip = 0.1

            pigeon_true_x = pigeon_true_x + new_step
            if pigeon_true_x >= EDGE_DISTANCE:
                pigeon_shown_x = EDGE_DISTANCE
            elif pigeon_true_x <= -EDGE_DISTANCE:
                pigeon_shown_x = -EDGE_DISTANCE
            else:
                pigeon_shown_x = pigeon_true_x

        def rng_trial_type_function():
            return random()
        # Function to update status text/graphics
        #   Note -- if you change this code, set code type to
        #   "Auto->JS" first to make sure the JS code gets updated,
        #   then set code type back to "both" and add the following
        #   line at the top of this function:
        #    global coins_string, steps_string, coins_bar_height, coins_bar_center, steps_bar_height, steps_bar_center
        def update_status_function(update_text, update_coins_bar, update_steps_bar, update_env_bar, obj):
            global coins_string, steps_string, coins_bar_height, coins_bar_center, steps_bar_height, steps_bar_center, env_bar_width, env_bar_center

            # Conditionally update strings
            if update_text:
                coins_string = 'Coins gained per correct choice = ' + str(coins_gained_per_correct) + '\nCoins lost per error choice = ' + str(coins_lost_per_error)
                if obj == 'score':
                    coins_string = 'Coins gained per correct choice = ' + str(coins_gained_per_correct) + '\nCoins lost per error choice = ' + str(coins_lost_per_error) + '\nTarget number of coins = ' + str(coins_max)
                steps_string = ''
                if obj == 'steps':
                    steps_string = 'Total steps budget = ' + str(steps_max)

            # Conditionally update coins bar
            if update_coins_bar:
                if coins_count <= coins_max:
                    coins_bar_height = coins_count/coins_max*STATUS_BAR_HEIGHT
                else:
                    coins_bar_height = STATUS_BAR_HEIGHT+0.02
                coins_bar_center = STATUS_BAR_BASE_Y+coins_bar_height/2

            # Conditionally update steps bar
            if update_steps_bar:
                if obj == 'steps':
                    steps_bar_height = (steps_max-steps_count)/steps_max*STATUS_BAR_HEIGHT
                else:
                    if steps_count <= steps_max:
                        steps_bar_height = (steps_count)/steps_max*STATUS_BAR_HEIGHT
                    else:
                        steps_bar_height = STATUS_BAR_HEIGHT+0.02
                steps_bar_center = STATUS_BAR_BASE_Y+steps_bar_height/2

            if update_env_bar:
                env_bar_width = (switch_time-steps_in_trial)/switch_time*ENV_BAR_WIDTH
                if steps_in_trial >= switch_time:
                    env_bar_width = 0
                env_bar_center = ENV_X - ENV_BAR_WIDTH/2 + env_bar_width/2

        # Function to show feedback after each trial
        #   Note -- if you change this code, set code type to
        #   "Auto->JS" first to make sure the JS code gets updated,
        #   then set code type back to "both" and add the following
        #   line at the top of this function:
        #   global last_coins_count, last_steps_count, message_string
        def set_trial_end_string_function(feedback_string):
            global last_coins_count, last_steps_count, message_string

            coins_change = coins_count - last_coins_count
            steps_change = steps_count - last_steps_count
            if coins_change > 0:
                coins_feedback_string = str(coins_change) + ' coins gained'
            elif coins_change < 0:
                coins_feedback_string = str(coins_change) + ' coins lost'
            else:
                coins_feedback_string = 'no coins gained or lost'

            message_string = feedback_string + '\n\n' + coins_feedback_string + '\n\n' + str(steps_change) + ' steps used this trial'
            last_coins_count = coins_count
            last_steps_count = steps_count

        # Function to generate standard string at the end of each block
        #   Note -- if you change this code, set code type to
        #   "Auto->JS" first to make sure the JS code gets updated,
        #   then set code type back to "both" and add the following
        #   line at the top of this function:
        #    global message_string, bonus_count, coins_count, coins_bar_height, coins_bar_center
        def set_block_end_string_function():
            global message_string, bonus_count, coins_count, coins_bar_height, coins_bar_center
            if (task_objective == 'steps' and coins_count >= coins_max):
                message_string='Block finished.\n\nYou earned a bonus. Great job!'
                bonus_count += 1
                coins_bar_height = STATUS_BAR_HEIGHT
                coins_bar_center = STATUS_BAR_BASE_Y+coins_bar_height/2
            else:
                message_string='Block finished.\n\nGreat job!'
                coins_bar_height = 0
                coins_bar_center = STATUS_BAR_BASE_Y


        move_pigeon = move_pigeon_function
        rng_trial_type = rng_trial_type_function
        update_status = update_status_function
        set_trial_end_string = set_trial_end_string_function
        set_block_end_string = set_block_end_string_function
        update_status(True, True, True, False, 'steps')
      Begin JS Experiment:
        exp_type = 'snr';
        still_going = true;
        choice = "";
        //experiment_task_conditions_file = (("Resources/PigeonsTaskConditions" + util.randint(1, 5).toString()) + ".xlsx");
        experiment_task_conditions_file = ("Resources/PigeonsTaskConditions1.xlsx");
        dummy_mode = false;
        white = new util.Color([1, 1, 1]);
        grey = new util.Color([0.2, 0.2, 0.2]);
        yellow = new util.Color([1, 1, 0]);
        green = new util.Color([-1, 0, -1]);
        lightgreen = new util.Color([0, 1, 0]);
        black = new util.Color([-1, -1, -1]);
        red = new util.Color([1, 0, 0]);
        ORIGIN_X = 0;
        ORIGIN_Y = 0;
        SEEDS_WIDTH = 0.1;
        SEEDS_HEIGHT = 0.1;
        EDGE_DISTANCE = 0.75;
        ENV_WIDTH = 0.15
        ENV_HEIGHT = 0.1
        ENV_X = EDGE_DISTANCE - 0.1
        ENV_Y = ORIGIN_Y + 0.4
        SEEDS_SCALE = 1;
        INSTRUCTION_X = ORIGIN_X;
        INSTRUCTION_Y = 0.45;
        INSTRUCTION_COLOR = yellow;
        CHOICE_STRING = "Press Left or Right arrow to choose";
        CONTINUE_STRING = "Press Spacebar or any arrow to continue";
        PREDEFINED_CHOICE_STRING = "Press Left/Up for small/large increases, Right/Down for small/large decreases,\nSpacebar to start the trial.";
        PREDEFINED_CHOICE_COMMIT_STRING = "Press Left/Up for small/large increases, Right/Down for small/large decreases,\nc to commit or Spacebar to start the trial.";
        PREDEFINED_NO_CHOICE_STRING = "Petey failed to reach the bound\nConsider moving it closer.";
        PREDEFINED_ABORT_INSTRUCTION = "Press Spacebar or any arrow to abort trial";
        PREDEFINED_ABORT_STRING = "Aborted early";
        CORRECT_STRING = "Correct";
        ERROR_STRING = "Error";
        NO_CHOICE_STRING = "Failed to respond\nPlease respond more quickly";
        RT_TOO_FAST_MESSAGE = "Session ended early.\n\nYour responses were consistently faster than this task requires to make a real decision. Thank you for participating.";
        RT_TOO_SLOW_MESSAGE = "Session ended early.\n\nYour responses were consistently slower than this task expects, or you were frequently not responding in time. Thank you for participating.";
        MESSAGE_X = ORIGIN_X;
        MESSAGE_Y = 0.3;
        instruction_show = true;
        instruction_string = CONTINUE_STRING;
        message_show = true;
        message_string = "";
        steps_string = " ";
        coins_string = " ";
        if ((exp_type === "reward")) {
            high_env_img = "Resources/tree.png";
            low_env_img = "Resources/cactus.png";
        } else {
            if ((exp_type === "snr")) {
                high_env_img = "Resources/sun.png";
                low_env_img = "Resources/moon.png";
            }
        }
        env_img = high_env_img;
        steps_label = 'Steps remaining';
        steps_text = '200';
        coins_text = '0';
        step_mean_vals = [];
        step_std_vals = [];

        LINE_HEIGHT = 0.1;
        STATUS_BAR_HEIGHT = 0.2;
        STATUS_BAR_WIDTH = 0.1;
        ENV_BAR_HEIGHT = 0.02;
        ENV_BAR_WIDTH = 0.1
        STATUS_BAR_BASE_Y = (ORIGIN_Y - 0.4);
        STATUS_BAR_APEX_Y = (STATUS_BAR_BASE_Y + STATUS_BAR_HEIGHT);
        STATUS_BAR_BRACKET_WIDTH = 0.35;
        ABSCISSA_Y = (ORIGIN_Y - 0.05);
        ABSCISSA_WIDTH = (EDGE_DISTANCE * 2);
        ORDINATE_Y = (ORIGIN_Y + 0.05);
        ORDINATE_WIDTH = 0.2;
        ORDINATE_HEIGHT = 0.01;
        COINS_BAR_X = (- 0.1);
        COINS_TEXT_X = (- 0.1);
        COINS_TEXT_Y = (- 0.37);
        COINS_LABEL_TEXT_X = (- 0.28);
        COINS_LABEL_TEXT_Y = (- 0.2);
        COINS_PROPERTIES_TEXT_X = (- 0.55);
        COINS_PROPERTIES_TEXT_Y = (- 0.3);
        STEPS_BAR_X = 0.1;
        STEPS_TEXT_X = 0.1;
        STEPS_TEXT_Y = (- 0.37);
        STEPS_LABEL_TEXT_X = 0.35;
        STEPS_LABEL_TEXT_Y = (- 0.2);
        STEPS_PROPERTIES_TEXT_X = 0.55;
        STEPS_PROPERTIES_TEXT_Y = (- 0.3);
        steps_bar_height = 0;
        steps_bar_center = 0;
        coins_bar_height = 0;
        coins_bar_center = 0;
        env_bar_height = 0;
        env_bar_width = 0;
        env_bar_center = ENV_X - ENV_BAR_WIDTH/2;
        PREDEFINED_BOUND_COLOR = green;
        PREDEFINED_BOUND_WIDTH = 0.2;
        PREDEFINED_BOUND_HEIGHT = 0.01;
        PREDEFINED_BOUND_Y = (ORIGIN_Y + 0.05);
        PREDEFINED_BOUND_SMALL_DELTA = 0.003;
        PREDEFINED_BOUND_LARGE_DELTA = 0.05;
        PREDEFINED_BOUND_X_DEFAULT = 0.05;
        PREDEFINED_BOUND_MARKER_SZ = 0.01;
        PREDEFINED_BOUND_MARKER_Y = 0.16;
        PREDEFINED_BOUND_MARKER_COLOR = lightgreen;
        predefined_bound_x = PREDEFINED_BOUND_X_DEFAULT;
        predefined_bound_x_previous = predefined_bound_x;
        committed_to_bound = false;
        predefined_bound_min_bonus = 0;
        predefined_bound_max_bonus = 0;
        min_steps_to_commit = 100;
        seeds_show = false;
        pigeon_show = false;
        status_show = false;
        box_show = false;
        UPDATE_INTERVAL = 0.200;
        ITI = 0.7;
        PREDEFINED_UPDATE_INTERVAL = 0.1;
        block_number = 0;
        cal_block_number = 0;
        test_block_number = 0;
        trial_number = 0;
        trial_start = true;
        bonus_count = 0;

        STEPS_MAX_PER_TRIAL = 50;
        low_switch_time = STEPS_MAX_PER_TRIAL;
        high_switch_time = STEPS_MAX_PER_TRIAL;
        RT_WARMUP_TRIALS_TO_DISCARD = 10;
        RT_TOO_FAST_STEPS = 3;
        RT_TOO_SLOW_STEPS = 25;
        RT_TIMEOUT_FRACTION_MAX = 0.2;
        should_exclude_participant = false;
        exclusion_message = "";
        coins_gained_per_correct = 1;
        coins_lost_per_error = 1;
        coins_paid_to_start_trial = 0;
        coins_count = 0;
        coins_max = 8;
        steps_lost_per_error = 0;
        steps_taken_to_start_trial = 1;
        steps_count = 0;
        steps_max = 11;
        step_mean_val = 0.02;
        step_std_val = 0.1;
        last_coins_count = 0;
        last_steps_count = 0;
        changepoint = false;

        pigeon_flip = 0.1;
        pigeon_true_x = 0;
        pigeon_shown_x = pigeon_true_x;
        pigeon_steps = [];

        function move_pigeon_function(step_mean, step_std) {
            var new_step, r, u, v;
            for (var i, _pj_c = 0, _pj_a = util.range(10), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                u = ((2 * Math.random()) - 1);
                v = ((2 * Math.random()) - 1);
                r = ((u * u) + (v * v));
                if (((r !== 0) && (r < 1))) {
                    break;
                }
            }
            new_step = (step_mean + ((step_std * u) * Math.sqrt((((- 2) * Math.log(r)) / r))));
            if ((new_step > 0)) {
                pigeon_flip = (- 0.1);
            } else {
                pigeon_flip = 0.1;
            }
            pigeon_true_x = (pigeon_true_x + new_step);
            if ((pigeon_true_x >= EDGE_DISTANCE)) {
                pigeon_shown_x = EDGE_DISTANCE;
            } else {
                if ((pigeon_true_x <= (- EDGE_DISTANCE))) {
                    pigeon_shown_x = (- EDGE_DISTANCE);
                } else {
                    pigeon_shown_x = pigeon_true_x;
                }
            }
        }
        function rng_trial_type_function() {
            var x;
            x = Math.random();
            return x;
        }
        function update_status_function(update_text, update_coins_bar, update_steps_bar, update_env_bar, obj) {
            if (update_text) {
                coins_string = ((("Coins gained per correct choice = " + coins_gained_per_correct.toString()) + "\nCoins lost per error choice = ") + coins_lost_per_error.toString());
                if ((obj === "score")) {
                    coins_string = ((((("Coins gained per correct choice = " + coins_gained_per_correct.toString()) + "\nCoins lost per error choice = ") + coins_lost_per_error.toString()) + "\nTarget number of coins = ") + coins_max.toString());
                }
                steps_string = "";
                if ((obj === "steps")) {
                    steps_string = ("Total steps budget = " + steps_max.toString());
                }
            }
            if (update_coins_bar) {
                if ((coins_count <= coins_max)) {
                    coins_bar_height = ((coins_count / coins_max) * STATUS_BAR_HEIGHT);
                } else {
                    coins_bar_height = (STATUS_BAR_HEIGHT + 0.02);
                }
                coins_bar_center = (STATUS_BAR_BASE_Y + (coins_bar_height / 2));
            }
            if (update_steps_bar) {
                if ((obj === "steps")) {
                    steps_bar_height = (((steps_max - steps_count) / steps_max) * STATUS_BAR_HEIGHT);
                } else {
                    if ((steps_count <= steps_max)) {
                        steps_bar_height = ((steps_count / steps_max) * STATUS_BAR_HEIGHT);
                    } else {
                        steps_bar_height = (STATUS_BAR_HEIGHT + 0.02);
                    }
                }
                steps_bar_center = (STATUS_BAR_BASE_Y + (steps_bar_height / 2));
            }
            if (update_env_bar) {
                env_bar_width = (((switch_time - steps_in_trial) / switch_time) * ENV_BAR_WIDTH);
                if ((steps_in_trial >= switch_time)) {
                    env_bar_width = 0;
                }
                env_bar_center = (ENV_X - ENV_BAR_WIDTH/2 + (env_bar_width / 2));
            }

        }
        function set_trial_end_string_function(feedback_string) {
            var coins_change, coins_feedback_string, steps_change;
            coins_change = (coins_count - last_coins_count);
            steps_change = (steps_count - last_steps_count);
            if ((coins_change > 0)) {
                coins_feedback_string = (coins_change.toString() + " coins gained");
            } else {
                if ((coins_change < 0)) {
                    coins_feedback_string = (coins_change.toString() + " coins lost");
                } else {
                    coins_feedback_string = "no coins gained or lost";
                }
            }
            message_string = (((((feedback_string + "\n\n") + coins_feedback_string) + "\n\n") + steps_change.toString()) + " steps used this trial");
            last_coins_count = coins_count;
            last_steps_count = steps_count;
        }

        function set_block_end_string_function() {
            if (((task_objective === "steps") && (coins_count >= coins_max))) {
                message_string = "Block finished.\n\nYou earned a bonus. Great job!";
                bonus_count += 1;
                coins_bar_height = STATUS_BAR_HEIGHT;
                coins_bar_center = (STATUS_BAR_BASE_Y + (coins_bar_height / 2));
            } else {
                message_string = "Block finished.\n\nGreat job!";
                coins_bar_height = 0;
                coins_bar_center = STATUS_BAR_BASE_Y;
            }
        }

        move_pigeon = move_pigeon_function;
        rng_trial_type = rng_trial_type_function;
        update_status = update_status_function;
        set_trial_end_string = set_trial_end_string_function;
        set_block_end_string = set_block_end_string_function;
        update_status(true, true, true, false, "steps");
  Routine simple_demo
    CodeComponent sd_code_update
      Code Type = Auto->JS
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      Begin Routine:
        if demo_start:
            # initialize pigeon variables
            pigeon_flip = 0.1
            pigeon_true_x = 0
            pigeon_shown_x = pigeon_true_x

            # Randomize direction, set std
            if randint(0,2)==0:
                step_mean_val = -1*abs(step_mean)
            else:
                step_mean_val = abs(step_mean)
            step_std_val = step_std
            # unset flag
            demo_start = False
        else:
            # Check for completion
            if step_mean == 0 and steps_count == 50:
                simple_demo_trial_loop.finished = True
            if pigeon_true_x > -EDGE_DISTANCE and pigeon_true_x < EDGE_DISTANCE:
                move_pigeon(step_mean_val, step_std_val)
                steps_count += 1
            else:
                simple_demo_trial_loop.finished = True
      End Routine:
        if simple_demo_trial_loop.finished:
            steps_count = 0
    PolygonComponent sd_polygon_abscissa
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,ABSCISSA_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (EDGE_DISTANCE*2,LINE_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    ImageComponent sd_image_left_seeds
      image = Resources/seeds.png
      pos = (-EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size [set every repeat] = (SEEDS_SCALE*SEEDS_WIDTH,SEEDS_SCALE*SEEDS_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    ImageComponent sd_image_right_seeds
      image = Resources/seeds.png
      pos = (EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size [set every repeat] = (SEEDS_SCALE*SEEDS_WIDTH,SEEDS_SCALE*SEEDS_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    ImageComponent sd_image_pigeon
      image = Resources/pigeon.png
      pos [set every repeat] = (pigeon_shown_x,ORIGIN_Y)
      saveStartStop = False
      size [set every repeat] = (pigeon_flip, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    ImageComponent sm_env_img
      image [set every repeat] = $env_img
      pos = (ENV_X,ENV_Y)
      saveStartStop = False
      size = (ENV_WIDTH, ENV_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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  Routine show_message
    KeyboardComponent sm_kbd_continue
      allowedKeys = 'space', 'up', 'down', 'left', 'right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent sm_code_update
      Code Type = Auto->JS
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      Begin Experiment:
        box_width = 0
        box_height = 0
        box_x = 0
        box_y = 0
      Begin Routine:
        # Clear all keyboard events
        sm_kbd_continue.clearEvents()
      End Routine:
        # Ick, but whatever. Makes sure that we don't ever
        # drop unexpectedly out of a move loop without
        # resetting
        trial_start = True
    PolygonComponent sm_polygon_box
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 3
      pos [set every repeat] = (box_x,box_y)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (box_width,box_height)
      startVal [condition] = box_show
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    PolygonComponent sm_polygon_abscissa
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,ABSCISSA_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ABSCISSA_WIDTH,LINE_HEIGHT)
      startVal [condition] = pigeon_show
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    PolygonComponent sm_polygon_ordinate
      fillColor = -1,-1,-1
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (ORIGIN_X,ORDINATE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ORDINATE_WIDTH,ORDINATE_HEIGHT)
      startVal [condition] = status_show
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    PolygonComponent sm_polygon_petey_midpoint
      fillColor = 0.8824, 0.9451, 1.0000
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (pigeon_shown_x,ORDINATE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ORDINATE_WIDTH*0.9,ORDINATE_HEIGHT)
      startVal [condition] = status_show
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    ImageComponent sm_image_right_seeds
      image = Resources/seeds.png
      pos = (EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size [set every repeat] = (SEEDS_SCALE*SEEDS_WIDTH,SEEDS_SCALE*SEEDS_HEIGHT)
      startVal [condition] = seeds_show
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    ImageComponent sm_image_left_seeds
      image = Resources/seeds.png
      pos = (-EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size [set every repeat] = (SEEDS_SCALE*SEEDS_WIDTH,SEEDS_SCALE*SEEDS_HEIGHT)
      startVal [condition] = seeds_show
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    ImageComponent sm_image_petey
      image = Resources/pigeon.png
      pos [set every repeat] = (pigeon_shown_x,ORIGIN_Y)
      saveStartStop = False
      size [set every repeat] = (pigeon_flip, 0.1)
      startVal [condition] = pigeon_show
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    ImageComponent sm_image_env
      image [set every repeat] = $env_img
      pos = (ENV_X, ENV_Y)
      saveStartStop = False
      size = (ENV_WIDTH, ENV_HEIGHT)
      startVal [condition] = seeds_show
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    PolygonComponent sm_polygon_coin_bar
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      pos [set every repeat] = (COINS_BAR_X,coins_bar_center)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (STATUS_BAR_WIDTH,coins_bar_height)
      startVal [condition] = status_show
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    PolygonComponent sm_polygon_steps_bar
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      pos [set every repeat] = (STEPS_BAR_X,steps_bar_center)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (STATUS_BAR_WIDTH,steps_bar_height)
      startVal [condition] = status_show
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    PolygonComponent sm_polygon_status_bar_apex
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,STATUS_BAR_APEX_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (STATUS_BAR_BRACKET_WIDTH,LINE_HEIGHT)
      startVal [condition] = status_show
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    PolygonComponent sm_polygon_status_bar_base
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,STATUS_BAR_BASE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (STATUS_BAR_BRACKET_WIDTH,LINE_HEIGHT)
      startVal [condition] = status_show
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    TextComponent sm_text_coins
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (COINS_TEXT_X,COINS_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text [set every repeat] = $coins_text
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    TextComponent sm_text_coins_label
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (COINS_LABEL_TEXT_X,COINS_LABEL_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text = Coins earned
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    TextComponent sm_text_coins_properties
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.025
      pos = (COINS_PROPERTIES_TEXT_X,COINS_PROPERTIES_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text [set every repeat] = $coins_string
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    TextComponent sm_text_steps
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (STEPS_TEXT_X,STEPS_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text [set every repeat] = $steps_text
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    TextComponent sm_text_steps_label
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (STEPS_LABEL_TEXT_X, STEPS_LABEL_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text [set every repeat] = $steps_label
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    TextComponent sm_text_steps_properties
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.025
      pos = (STEPS_PROPERTIES_TEXT_X,STEPS_PROPERTIES_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text [set every repeat] = $steps_string
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    TextComponent sm_text_message
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (MESSAGE_X,MESSAGE_Y)
      saveStartStop = False
      startVal [condition] = message_show
      text [set every repeat] = $message_string
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    TextComponent sm_text_instruction
      color = $INSTRUCTION_COLOR
      letterHeight = 0.02
      pos = (INSTRUCTION_X,INSTRUCTION_Y)
      saveStartStop = False
      startVal [condition] = instruction_show
      text [set every repeat] = $CONTINUE_STRING
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  Routine simple_demo_setup
    CodeComponent sds_code_setup
      Code Type = Auto->JS
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      Begin Routine:
        # Set block conditions
        seeds_show = True
        pigeon_show = True
        status_show = False
        box_show = False
        demo_start = True
        steps_count = 0

        # Get variables from conditions file
        message_string = sdc_message
        step_mean = sdc_step_mean
        step_std = sdc_step_std
        SEEDS_SCALE = sdc_seeds_scale
        if sdc_img_file != None:
            env_img = 'Resources/' + sdc_img_file
        else:
            env_img = high_env_img
  Routine status_instruction_setup
    CodeComponent sis_code_setup
      Code Type = Auto->JS
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      Begin Routine:
        # Set conditions
        status_show = True
        pigeon_show = True
        seeds_show = True
        pigeon_flip = 0.1
        pigeon_true_x = 0
        pigeon_shown_x = pigeon_true_x


        box_show = sic_box_show
        box_width = sic_box_width
        box_height = sic_box_height
        box_x = sic_box_x
        box_y = sic_box_y
        message_string = sic_message
        SEEDS_SCALE = sic_seeds_scale
        task_objective = sic_objective
        if sic_img_file != None:
            env_img = 'Resources/' + sic_img_file
        else:
            env_img = high_env_img

        steps_label = 'Steps remaining'
        if task_objective == 'score':
            steps_label = 'Steps Threshold: ' + str(steps_max)
        elif task_objective == 'steps':
            steps_label = 'Steps Remaining'
        #    steps_text = '0'


        if task_objective == 'steps':
            steps_text = str(steps_max - steps_count)
        elif task_objective == 'score':
            steps_text = str(steps_count)
        coins_text = str(coins_count)

        steps_count += 1


        update_status(True, True, True, False, task_objective)
  Routine start_task
    CodeComponent st_code_setup
      Code Type = Auto->JS
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      Begin Routine:
        # Setup task
        trial_start = True
        trial_number = 1
        steps_count = 0
        coins_count = 0
        last_coins_count = coins_count
        last_steps_count = steps_count
        RT_high = []
        RT_low = []
        switch_occurred = False


        # Set globals from conditions file variables
        block_type = tc_block_type
        instructions_type = block_type.split("_")[0]
        task_objective = tc_task_objective
        step_mean = tc_step_mean
        step_std = tc_step_std
        steps_max = tc_steps_max
        steps_taken_to_start_trial = tc_steps_taken_to_start_trial
        steps_lost_per_error = tc_steps_lost_per_error
        coins_max = tc_coins_max
        coins_paid_to_start_trial = tc_coins_paid_to_start_trial
        coins_lost_per_error = tc_coins_lost_per_error
        coins_gained_per_correct = tc_coins_gained_per_correct
        changepoint = tc_changepoint
        env_img = 'Resources/' + tc_img_file

        # fixed blocks: save mean and std values over experiment
        if "fixed" in block_type:
            step_mean_vals.append(step_mean)
            step_mean_vals.sort()

            step_std_vals.append(step_std)
            step_std_vals.sort()

        if changepoint is False:
            env_text = ''

        # Get Instructions Conditions file name
        instructions_conditions_file = 'Resources/Pigeon_' + instructions_type + '_InstructionsConditions.xlsx'

        # Control flow
        online_trials_count = 10000

        # New block
        block_number += 1
        test_block_number += 1
        message_string = 'Testing Block ' + str(test_block_number) + ' of ' + str(len(experiment_loop.trialList))

        # Initialize pigeon variables
        pigeon_flip = 0.1
        pigeon_true_x = 0
        pigeon_shown_x = pigeon_true_x

        #if 'change_low' in task_type:
        #    switch_time = low_switch_time
        #    steps_max = low_steps_thresh+50
        #elif 'change_high' in task_type:
        #    switch_time = high_switch_time
        #    steps_max = high_steps_thresh+50

        if task_objective == 'steps':
            steps_label = 'Steps remaining'
            steps_text = str(steps_max - steps_count)
        elif task_objective == 'score':
            steps_label = 'Steps Threshold: ' + str(steps_max)
            steps_text = str(steps_count)

        # Update status graphics/text
        update_status(True, True, True, changepoint, task_objective)
  Routine general_instructions_setup
    CodeComponent gis_code_setup
      Code Type = Auto->JS
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      Begin Routine:
        status_show = False
        box_show = False
        pigeon_show = gic_pigeon_show
        seeds_show = gic_seeds_show
        message_string = gic_message
  Routine final_message
    CodeComponent fm_code_setup
      Code Type = Auto->JS
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      Begin Routine:
        message_string = exclusion_message if should_exclude_participant else 'Finished, fantastic job!'
  Routine consent
    TextboxComponent consent_txt
      bold = False
      editable = False
      fillColor = -0.1765, -0.1765, -0.1765
      letterHeight = 0.023
      size = (0.75, 0.68)
      startVal [time (s)] = 0.0
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      text:
        This is an academic research project conducted through the University of Pennsylvania. In this game, a pigeon will wander from the center of the screen to one of two seed piles on the left or right. Your goal is either to guess the direction the pigeon will ultimately choose or set a cut-off for the pigeon’s movement to make a choice based on their current location.

        The estimated total time is about 30 minutes.

        You must be at least 18 years old to participate. Your participation in this research is voluntary, which means you can choose whether or not to participate without negative consequences. Your anonymity is assured: the researchers who have requested your participation will not receive any personal information about you except your previously provided Prolific demographic data such as gender, ethnicity, and age. The de-identified data may be stored and distributed for future research studies without additional informed consent.

        If you have questions about this research, please contact Ishan Kalburge by emailing ikalbur1@jhu.edu or Josh Gold by emailing jigold@pennmedicine.upenn.edu.

        If you have questions, concerns, or complaints regarding your participation in this research study, or if you have any questions about your rights as a research subject and you cannot reach a member of the study team, you may contact the Office of Regulatory Affairs at the University of Pennsylvania by calling (215) 898-2614 or emailing irb@pobox.upenn.edu.
    PolygonComponent consent_box
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.4, -0.4)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent consent_mouse
      clickable = consent_box
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextboxComponent consent_acknowledge
      anchor = center-left
      bold = False
      editable = False
      fillColor = -0.1765, -0.1765, -0.1765
      letterHeight = 0.023
      pos = (-0.36, -0.42)
      size = (0.71, 0.08)
      startVal [time (s)] = 0.0
      text = I have read the information above and agree to take part in this study. I understand that I may withdraw my consent at any time before I complete the tasks.
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  Routine show_final_message
    KeyboardComponent sfm_kbd_continue
      allowedKeys = 'space', 'up', 'down', 'left', 'right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    CodeComponent sfm_code_update
      Code Type = Auto->JS
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      Begin Experiment:
        box_width = 0
        box_height = 0
        box_x = 0
        box_y = 0
      Begin Routine:
        # Clear all keyboard events
        sm_kbd_continue.clearEvents()
      End Routine:
        # Ick, but whatever. Makes sure that we don't ever
        # drop unexpectedly out of a move loop without
        # resetting
        trial_start = True
    TextComponent sfm_text_message
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (MESSAGE_X,MESSAGE_Y)
      saveStartStop = False
      startVal [condition] = message_show
      text [set every repeat] = $message_string
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    TextComponent sfm_text_steps_properties
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.025
      pos = (STEPS_PROPERTIES_TEXT_X,STEPS_PROPERTIES_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text [set every repeat] = $steps_string
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    TextComponent sfm_text_steps_label
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (STEPS_LABEL_TEXT_X, STEPS_LABEL_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text = Steps remaining
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    TextComponent sfm_text_steps
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (STEPS_TEXT_X,STEPS_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text [set every repeat] = $steps_max - steps_count
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    TextComponent sfm_text_coins_properties
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.025
      pos = (COINS_PROPERTIES_TEXT_X,COINS_PROPERTIES_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text [set every repeat] = $coins_string
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    TextComponent sfm_text_coins_label
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (COINS_LABEL_TEXT_X,COINS_LABEL_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text = Coins earned
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    TextComponent sfm_text_coins
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (COINS_TEXT_X,COINS_TEXT_Y)
      saveStartStop = False
      startVal [condition] = status_show
      text [set every repeat] = $coins_count
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    PolygonComponent sfm_polygon_status_bar_base
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,STATUS_BAR_BASE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (STATUS_BAR_BRACKET_WIDTH,LINE_HEIGHT)
      startVal [condition] = status_show
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    PolygonComponent sfm_polygon_status_bar_apex
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,STATUS_BAR_APEX_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (STATUS_BAR_BRACKET_WIDTH,LINE_HEIGHT)
      startVal [condition] = status_show
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    PolygonComponent sfm_polygon_steps_bar
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      pos [set every repeat] = (STEPS_BAR_X,steps_bar_center)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (STATUS_BAR_WIDTH,steps_bar_height)
      startVal [condition] = status_show
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    PolygonComponent sfm_polygon_coin_bar
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      pos [set every repeat] = (COINS_BAR_X,coins_bar_center)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (STATUS_BAR_WIDTH,coins_bar_height)
      startVal [condition] = status_show
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    ImageComponent sfm_image_petey
      image = Resources/pigeon.png
      pos [set every repeat] = (pigeon_shown_x,ORIGIN_Y)
      saveStartStop = False
      size [set every repeat] = (pigeon_flip, 0.1)
      startVal [condition] = pigeon_show
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    ImageComponent sfm_image_left_seeds
      image = Resources/seeds.png
      pos = (-EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size = (SEEDS_WIDTH,SEEDS_HEIGHT)
      startVal [condition] = seeds_show
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    ImageComponent sfm_image_right_seeds
      image = Resources/seeds.png
      pos = (EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size = (SEEDS_WIDTH,SEEDS_HEIGHT)
      startVal [condition] = seeds_show
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    PolygonComponent sfm_polygon_petey_midpoint
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (pigeon_shown_x,ORDINATE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ORDINATE_WIDTH*0.9,ORDINATE_HEIGHT)
      startVal [condition] = status_show
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    PolygonComponent sfm_polygon_ordinate
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (ORIGIN_X,ORDINATE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ORDINATE_WIDTH,ORDINATE_HEIGHT)
      startVal [condition] = status_show
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    PolygonComponent sfm_polygon_abscissa
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,ABSCISSA_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ABSCISSA_WIDTH,LINE_HEIGHT)
      startVal [condition] = pigeon_show
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    PolygonComponent sfm_polygon_box
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 3
      pos [set every repeat] = (box_x,box_y)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (box_width,box_height)
      startVal [condition] = box_show
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    TextComponent sfm_text_instruction
      color = $INSTRUCTION_COLOR
      letterHeight = 0.02
      pos = (INSTRUCTION_X,INSTRUCTION_Y)
      saveStartStop = False
      startVal [condition] = instruction_show
      text [set every repeat] = $CONTINUE_STRING
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  Routine setup_instructions_message
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        message_string = ic_message_string
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  Routine task_run
    KeyboardComponent otr_kbd_response
      allowedKeys = 'left','right'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      store = nothing
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    CodeComponent otr_code_update
      Code Type = Auto->JS
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      Begin Routine:
        if trial_start is True:
            # mixed block: randomly choose step vals
            if block_type == "mixed":
                # step_mean_vals[0]/[1] are the low/high-SNR magnitudes (see the
                # "fixed" push at block start); env_img mirrors the same
                # low_env_img/high_env_img convention used for the changepoint
                # switch below, so the SNR is visibly signaled on every trial, not
                # just held at the block's own (otherwise-unused) tc_img_file.
                step_mean = step_mean_vals[0]
                step_std = step_std_vals[0]
                env_img = low_env_img
                rv = rng_trial_type();
                if rv > 0.5:
                    step_mean = step_mean_vals[1]
                    step_std = step_std_vals[1]
                    env_img = high_env_img

            if 'change_low' in block_type:
                switch_time = low_switch_time
            elif 'change_high' in block_type:
                switch_time = high_switch_time
            # Clear keyboard events
            otr_kbd_response.clearEvents()

            # Default feedback
            message_string = NO_CHOICE_STRING
            choice = 'none'

            # Set instruction string
            instruction_string = CHOICE_STRING

            # Initialize pigeon variables
            pigeon_flip = 0.1
            pigeon_true_x = ORIGIN_X
            pigeon_shown_x = pigeon_true_x
            pigeon_steps = [pigeon_shown_x]

            # ensure appropriate step values and img at beginning of each trial
            # Mixed block already set env_img above, per-trial, from the actual
            # drawn SNR -- don't overwrite it with the block's static tc_img_file.
            if block_type != "mixed":
                env_img = 'Resources/' + tc_img_file
            if "change_low" in block_type:
                step_mean = step_mean_vals[0]
                step_std = step_std_vals[0]
            elif "change_high" in block_type:
                step_mean = step_mean_vals[1]
                step_std = step_std_vals[1]
            if changepoint:
                env_bar_height = ENV_BAR_HEIGHT
            switch_occurred = False
            coins_gained_per_correct = tc_coins_gained_per_correct
            coins_lost_per_error = tc_coins_lost_per_error


            # Pay to play
            coins_count += coins_paid_to_start_trial
            steps_count += steps_taken_to_start_trial
            steps_in_trial = 0
            # Randomize direction, set std
            if randint(0,2)==1:
                correct_ans = 'right'
                step_mean_val = abs(step_mean)
            else:
                correct_ans = 'left'
                step_mean_val = -1*abs(step_mean)
            step_std_val = step_std
            # Save trial parameters
            thisExp.addData('step_mean_val', step_mean_val)
            thisExp.addData('step_std_val', step_std_val)
            thisExp.addData('block_number', block_number)
            thisExp.addData('trial_number', trial_number)
            thisExp.addData('correct', correct_ans)
            # Record the changepoint step directly, per trial, so downstream
            # analysis reads it rather than re-deriving it from RTs (which would
            # need to independently replicate the exact trimming/rounding used
            # to compute low_switch_time/high_switch_time above).
            if changepoint:
                thisExp.addData('switch_time', switch_time)
            # Set flag
            trial_start = False

            if task_objective == 'steps':
                steps_text = str(steps_max - steps_count)
            elif task_objective == 'score':
                steps_text = str(steps_count)
            coins_text = str(coins_count)

            # change block bar update
            if changepoint:
                env_text = str(switch_time - steps_in_trial)
            update_status(False,False,False,changepoint,task_objective)
        else:
            # Increment the counter and move the pigeon
            steps_count += 1
            steps_in_trial += 1
            # Update text
            if changepoint is True and steps_in_trial < switch_time:
                env_text = str(switch_time - steps_in_trial)
            else:
                env_text = ''

            # update steps text
            if task_objective == 'steps':
                steps_text = str(steps_max - steps_count)
            elif task_objective == 'score':
                steps_text = str(steps_count)

            # change blocks: code in change point at
            # predetermined RT based on fixed blocks
            if changepoint is True and switch_occurred is False:
                if "high" in block_type:
                    if steps_in_trial == high_switch_time :
                        env_bar_height = 0
                        env_img = low_env_img
                        switch_occurred = True
                        # Preserve this trial's direction (correct_ans) across the changepoint;
                        # only the SNR (magnitude) changes. step_mean_vals[i] holds unsigned
                        # per-SNR magnitudes, so the sign must be re-applied here (previously it
                        # was not, forcing post-changepoint drift to always be positive).
                        step_mean_val = abs(step_mean_vals[0]) if correct_ans == 'right' else -1*abs(step_mean_vals[0])
                        step_std_val = step_std_vals[0]
                elif "low" in block_type:
                    if steps_in_trial == low_switch_time:
                        env_bar_height = 0
                        env_img = high_env_img
                        switch_occurred = True
                        step_mean_val = abs(step_mean_vals[1]) if correct_ans == 'right' else -1*abs(step_mean_vals[1])
                        step_std_val = step_std_vals[1]
            move_pigeon(step_mean_val, step_std_val)
            pigeon_steps.append(pigeon_shown_x)
            # Update steps status
            update_status(True, False, True, changepoint, task_objective)


        # Check for end of task (no more steps)
        if steps_count >= steps_max:
            # Drop out
            endroutine = True;
            move_loop.finished = True
            trial_loop.finished = True

            # record relevant median RT for low and high blocks (median only, per task-code
            # standardization; rounded to an integer step count; computed after discarding the
            # first RT_WARMUP_TRIALS_TO_DISCARD trials of the block -- see calculate_median /
            # trim_warmup_trials). Also screens for an unusable RT distribution (too fast/slow)
            # and ends the session early if so -- see check_rt_extremity.
            if "fixed_low" in block_type:
                rt_trimmed = trim_warmup_trials(RT_low)
                low_switch_time = calculate_median(rt_trimmed)
                exclusion_reason = check_rt_extremity(rt_trimmed)
                if exclusion_reason is not None:
                    should_exclude_participant = True
                    exclusion_message = RT_TOO_FAST_MESSAGE if exclusion_reason == 'too_fast' else RT_TOO_SLOW_MESSAGE
                    experiment_loop.finished = True
            elif "fixed_high" in block_type:
                rt_trimmed = trim_warmup_trials(RT_high)
                high_switch_time = calculate_median(rt_trimmed)
                exclusion_reason = check_rt_extremity(rt_trimmed)
                if exclusion_reason is not None:
                    should_exclude_participant = True
                    exclusion_message = RT_TOO_FAST_MESSAGE if exclusion_reason == 'too_fast' else RT_TOO_SLOW_MESSAGE
                    experiment_loop.finished = True
      End Routine:
        if trial_loop.finished is True:
            if task_objective == 'steps':
                # Cap # of steps
                steps_count = steps_max

            # Save results
            thisExp.addData('pigeon_steps', pigeon_steps)
            thisExp.addData('coins_count', coins_count)
            thisExp.addData('steps_count', steps_count)
            thisExp.addData('choice', 'none')

            # Drop out of this block loop
            set_block_end_string()
            thisExp.addData('bonus', bonus_count)

        elif otr_kbd_response.keys:

            # Parse answer and update status
            if correct_ans in otr_kbd_response.keys:
                coins_count += coins_gained_per_correct
                set_trial_end_string(CORRECT_STRING)
                if (task_objective == 'steps') or (task_objective == 'score' and coins_count < coins_max):
                    update_status(False, True, False, "change" in block_type, task_objective == 'steps')
            else:
                coins_count -= coins_lost_per_error
                steps_count += steps_lost_per_error
                set_trial_end_string(ERROR_STRING)

            # Save results
            thisExp.addData('pigeon_steps', pigeon_steps)
            thisExp.addData('coins_count', coins_count)
            thisExp.addData('steps_count', steps_count)
            thisExp.addData('choice', otr_kbd_response.keys)

            # update status
            if (task_objective == 'steps') or (task_objective == 'score' and coins_count < coins_max):
                update_status(False, True, True, changepoint, task_objective)

                # Clear keyboard events
                otr_kbd_response.clearEvents()

                # record fixed block RTs for RT calibration in change blocks
                if "fixed_high" in block_type:
                    RT_high.append(len(pigeon_steps))
                elif "fixed_low" in block_type:
                    RT_low.append(len(pigeon_steps))

                # Drop out of pigeon movement loop
                trial_number += 1
                move_loop.finished = True


        elif move_loop.thisRepN == (STEPS_MAX_PER_TRIAL-1):
            move_loop.finished = True
            set_trial_end_string(NO_CHOICE_STRING)
            trial_number += 1
            # Save results if maxed out trial
            thisExp.addData('pigeon_steps', pigeon_steps)
            thisExp.addData('coins_count', coins_count)
            thisExp.addData('steps_count', steps_count)
            thisExp.addData('choice', 'none')
    PolygonComponent otr_polygon_abscissa
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,ABSCISSA_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (EDGE_DISTANCE*2,LINE_HEIGHT)
      startVal [time (s)] = 0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    PolygonComponent otr_polygon_ordinate
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (ORIGIN_X,ORDINATE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ORDINATE_WIDTH,ORDINATE_HEIGHT)
      startVal [time (s)] = 0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    PolygonComponent otr_polygon_petey_midpoint
      fillColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      ori = 90
      pos [set every repeat] = (pigeon_shown_x,ORDINATE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (ORDINATE_WIDTH*0.9,ORDINATE_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    ImageComponent otr_image_pigeon
      image = Resources/pigeon.png
      pos [set every repeat] = (pigeon_shown_x,ORIGIN_Y)
      saveStartStop = False
      size [set every repeat] = (pigeon_flip, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    ImageComponent otr_image_right_seeds
      image = Resources/seeds.png
      pos = (EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size [set every repeat] = (SEEDS_SCALE*SEEDS_WIDTH,SEEDS_SCALE*SEEDS_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    ImageComponent otr_image_left_seeds
      image = Resources/seeds.png
      pos = (-EDGE_DISTANCE,ORIGIN_Y)
      saveStartStop = False
      size [set every repeat] = (SEEDS_SCALE*SEEDS_WIDTH,SEEDS_SCALE*SEEDS_HEIGHT)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    ImageComponent otr_image_env
      image [set every repeat] = $env_img
      pos = (ENV_X, ENV_Y)
      saveStartStop = False
      size = (ENV_WIDTH, ENV_HEIGHT)
      startVal [time (s)] = 0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    PolygonComponent otr_polygon_changepoint_bar
      fillColor = white
      pos [set every repeat] = (env_bar_center, ENV_Y-0.06)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (env_bar_width,env_bar_height)
      startVal [time (s)] = 0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    PolygonComponent otr_polygon_coins_bar
      fillColor = white
      pos [set every repeat] = (COINS_BAR_X,coins_bar_center)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (STATUS_BAR_WIDTH,coins_bar_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    PolygonComponent otr_polygon_steps_bar
      fillColor = white
      pos [set every repeat] = (STEPS_BAR_X,steps_bar_center)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (STATUS_BAR_WIDTH,steps_bar_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    PolygonComponent otr_polygon_status_bar_apex
      fillColor = black
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,STATUS_BAR_APEX_Y) 
      saveStartStop = False
      shape = line
      size [set every repeat] = (STATUS_BAR_BRACKET_WIDTH,LINE_HEIGHT) 
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    PolygonComponent otr_polygon_status_bar_base
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos [set every repeat] = (ORIGIN_X,STATUS_BAR_BASE_Y)
      saveStartStop = False
      shape = line
      size [set every repeat] = (STATUS_BAR_BRACKET_WIDTH,LINE_HEIGHT) 
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
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    TextComponent otr_text_env
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (ENV_X+ENV_BAR_WIDTH/2+0.02,ENV_Y-0.06)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      text [set every repeat] = $env_text
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    TextComponent otr_text_coins
      color = black
      letterHeight = 0.03
      pos = (COINS_TEXT_X,COINS_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      text [set every repeat] = $coins_text
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    TextComponent otr_text_coins_label
      color = black
      letterHeight = 0.03
      pos = (COINS_LABEL_TEXT_X,COINS_LABEL_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      text = Coins earned
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    TextComponent otr_text_coins_properties
      letterHeight = 0.025
      pos = (COINS_PROPERTIES_TEXT_X,COINS_PROPERTIES_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      text [set every repeat] = $coins_string
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    TextComponent otr_text_steps
      color = black
      letterHeight = 0.03
      pos = (STEPS_TEXT_X,STEPS_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      text [set every repeat] = $steps_text
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    TextComponent otr_text_steps_label
      color = black
      letterHeight = 0.03
      pos = (STEPS_LABEL_TEXT_X,STEPS_LABEL_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      text [set every repeat] = $steps_label
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    TextComponent otr_text_steps_properties
      letterHeight = 0.025
      pos = (STEPS_PROPERTIES_TEXT_X,STEPS_PROPERTIES_TEXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      text [set every repeat] = $steps_string
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    TextComponent otr_text_instruction
      color = $INSTRUCTION_COLOR
      letterHeight = 0.02
      pos = (INSTRUCTION_X,INSTRUCTION_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      text [set every repeat] = $instruction_string
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    TextComponent show_snr
      disabled = True
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = UPDATE_INTERVAL
      text [set every frame] = $f'mean={step_mean}, std={step_std}'
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
Flow
  Routine consent
  Routine experiment_setup
  LoopInitiator general_instructions_loop loopType="TrialHandler"
    conditionsFile = Resources/PigeonGeneralInstructionsConditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'gic_message': 'Hi!\nThank you for participating in this experiment.\nPressing Esc will end this session.', 'gic_pigeon_show': False, 'gic_seeds_show': False},
      {'gic_message': 'This is Petey the Pigeon.', 'gic_pigeon_show': True, 'gic_seeds_show': False},
      {'gic_message': 'Petey is very hungry and sees two piles of seeds nearby. However, one pile is good and the other has gone bad.\nIn this task, you will see Petey walking back and forth between the piles to figure out which one he should eat. He will gradually tend toward the correct pile and remain there, but your job is to predict which pile that is before that happens.', 'gic_pigeon_show': True, 'gic_seeds_show': True},
      {'gic_message': "Let's see Petey move!", 'gic_pigeon_show': True, 'gic_seeds_show': True}]
    Routine general_instructions_setup
    Routine show_message
  LoopTerminator general_instructions_loop
  LoopInitiator simple_demo_block_loop loopType="TrialHandler"
    conditionsFile = Resources/PigeonSimpleDemoConditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sdc_message': 'In the forest, Petey will have more to eat, so he will receive more coins for correct decisions.', 'sdc_step_mean': 0.05, 'sdc_step_std': 0.1, 'sdc_img_file': 'tree.png', 'sdc_seeds_scale': 1},
      {'sdc_message': 'In the desert, Petey has less to eat, so he will receive fewer coins for correct decisions.', 'sdc_step_mean': 0.02, 'sdc_step_std': 0.1, 'sdc_img_file': 'cactus.png', 'sdc_seeds_scale': 0.8}]
    Routine simple_demo_setup
    Routine show_message
    LoopInitiator simple_demo_trial_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1000
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      Routine simple_demo
    LoopTerminator simple_demo_trial_loop
  LoopTerminator simple_demo_block_loop
  LoopInitiator status_instruction_loop loopType="TrialHandler"
    conditionsFile = Resources/PigeonStatusInstructionsConditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sic_message': 'Great!', 'sic_box_show': False, 'sic_box_x': 0, 'sic_box_y': 0, 'sic_box_width': 0, 'sic_box_height': 0, 'sdc_img_file': 'sun.png'},
      {'sic_message': "Now that you have the basic idea, let's get started with the task.", 'sic_box_show': None, 'sic_box_x': None, 'sic_box_y': None, 'sic_box_width': None, 'sic_box_height': None, 'sdc_img_file': None},
      {'sic_message': 'Your job is to determine, as quickly and accurately as possible, which seeds Petey will choose on each given trial, based on his initial movements.', 'sic_box_show': False, 'sic_box_x': 0, 'sic_box_y': 0, 'sic_box_width': 0, 'sic_box_height': 0, 'sdc_img_file': 'sun.png'},
      {'sic_message': "We show a black line where Petey starts and a white line at Petey's midpoint so you can see exactly how far away he has moved in either direction.", 'sic_box_show': True, 'sic_box_x': 0, 'sic_box_y': 0, 'sic_box_width': 0.25, 'sic_box_height': 0.25, 'sdc_img_file': 'sun.png'},
      {'sic_message': 'You will receive coins for each correct answer and\xa0 may lose coins for each incorrect answer. You also may have to pay coins to start each trial. You may get a bonus for reaching a certain number of coins.', 'sic_box_show': True, 'sic_box_x': -0.55, 'sic_box_y': -0.3, 'sic_box_width': 0.4, 'sic_box_height': 0.15, 'sdc_img_file': 'sun.png'}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
    Routine status_instruction_setup
    Routine show_message
  LoopTerminator status_instruction_loop
  LoopInitiator experiment_loop loopType="TrialHandler"
    conditionsFile = Resources/PigeonTaskConditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'tc_block_type': 'fixed-low', 'tc_steps_max': 600, 'tc_steps_taken_to_start_trial': 1, 'tc_steps_lost_per_error': 0, 'tc_coins_max': 150, 'tc_coins_paid_to_start_trial': 0, 'tc_coins_lost_per_error': 1, 'tc_coins_gained_per_correct': 1, 'tc_img_file': 'sun.png', 'tc_switch': True},
      {'tc_block_type': 'fixed-high', 'tc_steps_max': 600, 'tc_steps_taken_to_start_trial': 1, 'tc_steps_lost_per_error': 0, 'tc_coins_max': 150, 'tc_coins_paid_to_start_trial': 0, 'tc_coins_lost_per_error': 1, 'tc_coins_gained_per_correct': 1, 'tc_img_file': 'sun.png', 'tc_switch': True},
      {'tc_block_type': 'mixed', 'tc_steps_max': 600, 'tc_steps_taken_to_start_trial': 1, 'tc_steps_lost_per_error': 0, 'tc_coins_max': 150, 'tc_coins_paid_to_start_trial': 0, 'tc_coins_lost_per_error': 1, 'tc_coins_gained_per_correct': 1, 'tc_img_file': 'sun.png', 'tc_switch': True},
      {'tc_block_type': 'change-low', 'tc_steps_max': 600, 'tc_steps_taken_to_start_trial': 1, 'tc_steps_lost_per_error': 0, 'tc_coins_max': 150, 'tc_coins_paid_to_start_trial': 0, 'tc_coins_lost_per_error': 1, 'tc_coins_gained_per_correct': 1, 'tc_img_file': 'sun.png', 'tc_switch': True},
      {'tc_block_type': 'change-high', 'tc_steps_max': 600, 'tc_steps_taken_to_start_trial': 1, 'tc_steps_lost_per_error': 0, 'tc_coins_max': 150, 'tc_coins_paid_to_start_trial': 0, 'tc_coins_lost_per_error': 1, 'tc_coins_gained_per_correct': 1, 'tc_img_file': 'sun.png', 'tc_switch': True}]
    Routine start_task
    Routine show_message
    LoopInitiator instructions_loop loopType="TrialHandler"
      conditionsFile = $instructions_conditions_file
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine setup_instructions_message
      Routine show_message
    LoopTerminator instructions_loop
    LoopInitiator trial_loop loopType="TrialHandler"
      loopType = fullRandom
      nReps = online_trials_count
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      LoopInitiator move_loop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 1000
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        Routine task_run
      LoopTerminator move_loop
      Routine show_message
    LoopTerminator trial_loop
  LoopTerminator experiment_loop
  Routine final_message
  Routine show_final_message
